PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = controlStopSignal
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial',            sequenceDataset.loc[practiceBlock.thisN, 'trial'])
        thisExp.addData('myPract.direction',        sequenceDataset.loc[practiceBlock.thisN, 'direction'])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if stopSignalResp.keys:
            sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] = stopSignalResp.keys
        thisExp.addData('myPract.observedResponse', sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'])

        # Accuracy
        if pd.isna(sequenceDataset.loc[practiceBlock.thisN, 'observedResponse']):
            sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] = int(0)
        else:
            sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] == sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
        thisExp.addData('myPract.Accuracy', sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'])

        # RT all trials
        if stopSignalResp.keys:
            sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'] = stopSignalResp.rt
            thisExp.addData('myPract.RT_allTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'])

        # RT correct trials
        if sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] == 1:
            sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'] = stopSignalResp.rt
            thisExp.addData('myPract.RT_correctTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'])
    ImageComponent stopSignalStim
      image [set every repeat] = $'stimuli/go_'+sequenceDataset.loc[practiceBlock.thisN, 'direction']+'.png'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.250
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    KeyboardComponent stopSignalResp
      allowedKeys = 'right','left'
      correctAns = $sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.250
      store = first key
      storeCorrect = True
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  Routine practiceTrial_feedback
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    CodeComponent fbCode
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if stopSignalResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent fbText
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent fbSound
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fbCode_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)

        # number of trials with correct answer
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fbText_2
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent fbInstText
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Py
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      Begin Routine:
        # trialDuration
        if sequenceDataset.loc[experimentalBlock.thisN, 'trial'] <= 2:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = 0.5 + Practice_correctTrials_3qrtRT  # for first 2 trials, use 3rd qrt RT from practice block + 500 ms
        else:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = sequenceDataset.loc[experimentalBlock.thisN-1, 'trialDuration'] + sequenceDataset.loc[experimentalBlock.thisN-1, 'step']  # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial', sequenceDataset.loc[experimentalBlock.thisN, 'trial'])
        thisExp.addData('myExp.direction', sequenceDataset.loc[experimentalBlock.thisN, 'direction'])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if stopSignalResp_2.keys:
            sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] = stopSignalResp_2.keys
        thisExp.addData('myExp.observedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'])

        # trialDuration
        thisExp.addData('myExp.trialDuration', sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'])

        # Accuracy
        if pd.isna(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse']):
            sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(0)
        else:
            sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] == sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
        thisExp.addData('myExp.Accuracy', sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'])

        # RT all trials
        if stopSignalResp_2.keys:
            sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'] = stopSignalResp_2.rt
            thisExp.addData('myExp.RT_allTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'])

        # RT correct trials
        if sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] == 1:
            sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'] = stopSignalResp_2.rt
            thisExp.addData('myExp.RT_correctTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'])

        # adaptation
        sequenceDataset.loc[experimentalBlock.thisN, 'step'] = 0.0  # no step change
        thisExp.addData('myExp.step', sequenceDataset.loc[experimentalBlock.thisN, 'step'])
    ImageComponent stopSignalStim_2
      image [set every repeat] = $'stimuli/go_'+sequenceDataset.loc[experimentalBlock.thisN, 'direction']+'.png'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
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    KeyboardComponent stopSignalResp_2
      allowedKeys = 'left', 'right'
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'trial']/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']+0.05
      units = height
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    CodeComponent expAfterKeyPress
      Code Type = Auto->JS
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      Begin Routine:
        stopSignalStim_2.opacity = 1
      Each Frame:
        # force stimuli to disappear after keypress
        if stopSignalResp_2.keys:
            stopSignalStim_2.opacity = 0
      End Routine:
        blankDuration = 0.05
    CodeComponent expTone
      Code Type = Auto->JS
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      Before Experiment:
        # sound parameters
        errorBeep = sound.Sound(600, secs = 0.050, stereo=True, hamming=False, volume = 1)
      Begin Routine:
        # for each trial reset error beep parameters
        toggleBeep = False
        tonePlayed = False
      Each Frame:
        # determine if to play the error beep (within trial duration)
        if len(stopSignalResp_2.keys)>0 and stopSignalResp_2.corr!=1:
            toggleBeep = True # incorrect response key within the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
      End Routine:
        # determine if to play the error beep (at end of trial duration)
        if stopSignalResp_2.keys==None and stopSignalResp_2.corr!=1:
            toggleBeep = True # no response (where one, correct, was expected) by the end of the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
    TextComponent blank
      letterHeight = 0.05
      startVal [condition] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      stopVal [duration (s)] = 0.05
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  Routine End
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    ImageComponent endImage
      image = endSlide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    ImageComponent instImage
      image = instStopSignal_1.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction2
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    ImageComponent instImage_2
      image = instStopSignal_2.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine startPractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceSequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF STOP-SIGNAL STIMULI
        """

        import numpy as np
        import pandas as pd

        # control version:
        # all trials are go

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 20 # number of trials (must be even)

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)


        # %% create direction column
        # criteria
        # 1. no same direction more than three times
        # 2. each direction in same proportion


        """
        b.1 Assign Stimuli Pool
        """

        # pool of directions
        direction_pool  = ["left", "right"]

        # initialize digit, letter, and pair columns
        direction  = np.empty(trialAll_num,dtype="<U9")


        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=3: # 1st, 2nd, or 3rd trial
                    # pick any direction
                    direction[trialIdx]  = np.random.choice(direction_pool,1)[0]

                else:

                    if direction[trialIdx-1]==direction[trialIdx-2]==direction[trialIdx-3]:
                        # criterion 1: if the previous 3 trials have the same direction, pick the other direction for the current trial
                        direction_pool_red  = np.delete(direction_pool,   direction_pool.index(direction[trialIdx-1]) )  # reduced pool
                        direction[trialIdx]  = np.random.choice(direction_pool_red,1)[0]

                    else:
                        # continue picking any direction
                        direction[trialIdx]  = np.random.choice(direction_pool,1)[0]


            # criterion "2": proportion of expected response, to make sure they are the same (0.50)
            proportionCheck  = np.zeros(2,dtype="float") # initialize
            proportionCheck[0] = sum(direction=="left") / trialAll_num
            proportionCheck[1] = sum(direction=="right") / trialAll_num

            # implements the check above (keep asking for a new sequence if the check fails)
            if proportionCheck[0]==proportionCheck[1]:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # %% create expectedResponse
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[direction=="left"]     = "left"
        expectedResponse[direction=="right"]    = "right"

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'direction': direction,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})

        sequenceDataset['observedResponse'] = sequenceDataset['observedResponse'].astype('object')
  Routine startTask
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    TextComponent startTask_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taskSequenceGeneration
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode_2
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF STOP-SIGNAL STIMULI
        """

        import numpy as np
        import pandas as pd

        # control version:
        # all trials are go

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 216 # number of trials (must be even)

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)


        # %% create direction column
        # criteria
        # 1. no same direction more than three times
        # 2. each direction in same proportion


        """
        b.1 Assign Stimuli Pool
        """

        # pool of directions
        direction_pool  = ["left", "right"]

        # initialize digit, letter, and pair columns
        direction  = np.empty(trialAll_num,dtype="<U9")


        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=3: # 1st, 2nd, or 3rd trial
                    # pick any direction
                    direction[trialIdx]  = np.random.choice(direction_pool,1)[0]

                else:

                    if direction[trialIdx-1]==direction[trialIdx-2]==direction[trialIdx-3]:
                        # criterion 1: if the previous 3 trials have the same direction, pick the other direction for the current trial
                        direction_pool_red  = np.delete(direction_pool,   direction_pool.index(direction[trialIdx-1]) )  # reduced pool
                        direction[trialIdx]  = np.random.choice(direction_pool_red,1)[0]

                    else:
                        # continue picking any direction
                        direction[trialIdx]  = np.random.choice(direction_pool,1)[0]


            # criterion "2": proportion of expected response, to make sure they are the same (0.50)
            proportionCheck  = np.zeros(2,dtype="float") # initialize
            proportionCheck[0] = sum(direction=="left") / trialAll_num
            proportionCheck[1] = sum(direction=="right") / trialAll_num

            # implements the check above (keep asking for a new sequence if the check fails)
            if proportionCheck[0]==proportionCheck[1]:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # %% create expectedResponse
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[direction=="left"]     = "left"
        expectedResponse[direction=="right"]    = "right"

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'direction': direction,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})

        sequenceDataset['observedResponse'] = sequenceDataset['observedResponse'].astype('object')
Flow
  Routine instruction
  Routine instruction2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startPractice
    Routine practiceSequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      conditions:
        [{'ImageFile': 'stimuli/go_left.png', 'corrAns': 'left'},
        {'ImageFile': 'stimuli/go_right.png', 'corrAns': 'right'}]
      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instruction
  Routine instruction2
  Routine startTask
  Routine taskSequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    conditions:
      [{'ImageFile': 'stimuli/go_left.png', 'corrAns': 'left'},
      {'ImageFile': 'stimuli/go_right.png', 'corrAns': 'right'}]
    Routine experimentalTrial
  LoopTerminator experimentalBlock
  Routine End
