PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = adaptiveStroop
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.loc[practiceBlock.thisN, 'trial'])
        thisExp.addData('myPract.word', sequenceDataset.loc[practiceBlock.thisN, 'word'])
        thisExp.addData('myPract.color', sequenceDataset.loc[practiceBlock.thisN, 'color'])
        thisExp.addData('myPract.congruent', sequenceDataset.loc[practiceBlock.thisN, 'congruent'])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if stroopResp.keys:
            sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] = stroopResp.keys
        thisExp.addData('myPract.observedResponse', sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'])

        # Accuracy
        sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] == sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
        thisExp.addData('myPract.Accuracy', sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'])

        # RT all trials
        sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'] = stroopResp.rt
        thisExp.addData('myPract.RT_allTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'])

        # RT correct trials
        if sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] == 1:
            sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'] = stroopResp.rt
            thisExp.addData('myPract.RT_correctTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'])
    TextComponent stroopStim
      color [set every repeat] = $str(sequenceDataset.loc[practiceBlock.thisN, 'color'])
      letterHeight = 5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(sequenceDataset.loc[practiceBlock.thisN, 'word'])
      units = deg
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    KeyboardComponent stroopResp
      allowedKeys = 's', 'c', 'm', 'l'
      correctAns = $sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practiceTrial_feedback
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    CodeComponent fbCode
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if stroopResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent fbText
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent fbSound
      forceEndRoutine = False
      hamming = False
      saveStartStop = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fbCode_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)

        # number of trials with correct answer, among the trialRange specified below to discard the first 2 trials
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fbText_2
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent fbInstText
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70%
        you will repeat the practice block

        Press bar to continue
    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Py
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      Begin Routine:
        # adaptive duration
        if sequenceDataset.loc[experimentalBlock.thisN, 'trial'] == 1:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = 0.5 + Practice_correctTrials_3qrtRT  # for first trial, use 3rd qrt RT from practice block + 500 ms
        else:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = (
                sequenceDataset.loc[experimentalBlock.thisN - 1, 'trialDuration']
                + sequenceDataset.loc[experimentalBlock.thisN - 1, 'step']
            ) # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial', sequenceDataset.loc[experimentalBlock.thisN, 'trial'])
        thisExp.addData('myExp.word', sequenceDataset.loc[experimentalBlock.thisN, 'word'])
        thisExp.addData('myExp.color', sequenceDataset.loc[experimentalBlock.thisN, 'color'])
        thisExp.addData('myExp.congruent', sequenceDataset.loc[experimentalBlock.thisN, 'congruent'])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if stroopResp_2.keys:
            sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] = stroopResp_2.keys
        thisExp.addData('myExp.observedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'])

        # trialDuration
        thisExp.addData('myExp.trialDuration', sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'])

        # Accuracy
        if pd.isna(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse']):
            sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(0)
        else:
            sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] == sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
        thisExp.addData('myExp.Accuracy', sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'])

        # RT all trials
        if stroopResp_2.keys:
            sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'] = stroopResp_2.rt
            thisExp.addData('myExp.RT_allTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'])

        # RT correct trials
        if sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] == 1:
            sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'] = stroopResp_2.rt
            thisExp.addData('myExp.RT_correctTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'])

        # adaptation
        if sequenceDataset.loc[experimentalBlock.thisN, 'congruent'] == 0:  # for incongruent trials
            if sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] == 1:
                sequenceDataset.loc[experimentalBlock.thisN, 'step'] = -0.05  # if correct response, decrease duration
            else:
                sequenceDataset.loc[experimentalBlock.thisN, 'step'] = +0.05  # otherwise (incorrect or no response), increase duration
        else:  # for congruent trials
            sequenceDataset.loc[experimentalBlock.thisN, 'step'] = 0.0  # no step change
        thisExp.addData('myExp.step', sequenceDataset.loc[experimentalBlock.thisN, 'step'])
    TextComponent stroopStim_2
      color [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'color']
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      text [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'word']
      units = deg
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    KeyboardComponent stroopResp_2
      allowedKeys = 's','c','m','l'
      correctAns = $sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'trial'] / trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      units = height
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    CodeComponent expAfterKeyPress
      Code Type = Auto->JS
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      Each Frame:
        # force stimuli to disappear after keypress
        if stroopResp_2.keys:
            stroopStim_2.color = [0, 0, 0]
    CodeComponent expTone
      Code Type = Auto->JS
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      Before Experiment:
        # sound parameters
        errorBeep = sound.Sound(600, secs = 0.050, stereo=True, hamming=False, volume = 1)
      Begin Routine:
        # for each trial reset error beep parameters
        toggleBeep = False
        tonePlayed = False
      Each Frame:
        # determine if to play the error beep (within trial duration)
        if len(stroopResp_2.keys)>0 and stroopResp_2.corr!=1:
            toggleBeep = True # incorrect response key within the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
      End Routine:
        # determine if to play the error beep (at end of trial duration)
        if stroopResp_2.keys==None and stroopResp_2.corr!=1:
            toggleBeep = True # no response (where one, correct, was expected) by the end of the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
  Routine instructions
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    ImageComponent instImage
      image = instStroop_1.JPG
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine startPractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceSequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF STROOP STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 20 # number of trials (must be even)
        trialCongruent_proportion = 1/2 # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion # num of congruent trials

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)

            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        """
        b.1 Assign Stimuli Pool
        """

        # create word and color columns (combinations of words and colors)
        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # create expectedResponse
        # S= yellow, C= green, M= red, L= blue
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color=="yellow"] = "s"
        expectedResponse[color=="green"]  = "c"
        expectedResponse[color=="red"]    = "m"
        expectedResponse[color=="blue"]   = "l"

        """
        ===================================
        d. Initialise DataFrame
        ===================================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'word': word,
                                       'color': color,
                                       'congruent': congruent,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})

        sequenceDataset['observedResponse'] = sequenceDataset['observedResponse'].astype('object')
  Routine startTask
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    TextComponent startTask_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taskSequenceGeneration
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode_2
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF STROOP STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 216 # number of trials (must be even)
        trialCongruent_proportion = 1/2 # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion # num of congruent trials

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)

            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        """
        b.1 Assign Stimuli Pool
        """

        # create word and color columns (combinations of words and colors)
        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # create expectedResponse
        # S= yellow, C= green, M= red, L= blue
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color=="yellow"] = "s"
        expectedResponse[color=="green"]  = "c"
        expectedResponse[color=="red"]    = "m"
        expectedResponse[color=="blue"]   = "l"

        """
        ===================================
        d. Initialise DataFrame
        ===================================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'word': word,
                                       'color': color,
                                       'congruent': congruent,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})

        sequenceDataset['observedResponse'] = sequenceDataset['observedResponse'].astype('object')
  Routine instructions2
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    ImageComponent instImage_2
      image = instStroop_2.JPG
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine end
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    ImageComponent endImage
      image = endSlide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine instructions2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startPractice
    Routine practiceSequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instructions
  Routine instructions2
  Routine startTask
  Routine taskSequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
  LoopTerminator experimentalBlock
  Routine end
