PsychoPy2experiment version="2023.2.1"
Settings
  Experiment info = {'participant': '70', 'task no.': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = ADstroop
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine sequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuli
      Code Type = Py
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      End Routine:
        """
        This script generates sequences of stroop stimuli
        """

        import numpy as np
        import pandas as pd

        trialAll_num = 20 # number of trials (must be even)
        trialCongruent_proportion = 1/2 # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion # num of match trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)  # either 1 = abs(0-1)   or  0 = abs(1-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)
            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        # %% create word and color columns (combinations of words and colors)

        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        # %% create expectedResponse
        # S= yellow, C= green, M= red, L= blue
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color=="yellow"] = "s"
        expectedResponse[color=="green"]  = "c"
        expectedResponse[color=="red"]    = "m"
        expectedResponse[color=="blue"]   = "l"


        # %% create dataset
        # build a dataframe from dictionary

        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'word': word,
                                       'color': color,
                                       'congruent': congruent,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
        sequenceDataset
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.trial[practiceBlock.thisN])
        thisExp.addData('myPract.word', sequenceDataset.word[practiceBlock.thisN])
        thisExp.addData('myPract.color', sequenceDataset.color[practiceBlock.thisN])
        thisExp.addData('myPract.congruent', sequenceDataset.congruent[practiceBlock.thisN])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.expectedResponse[practiceBlock.thisN])
      End Routine:
        # observed response
        if stroopResp.keys:
            sequenceDataset.observedResponse[practiceBlock.thisN] = stroopResp.keys
        thisExp.addData('myPract.observedResponse',   sequenceDataset.observedResponse[practiceBlock.thisN])

        # Accuracy
        sequenceDataset.Accuracy[practiceBlock.thisN]             = int(sequenceDataset.observedResponse[practiceBlock.thisN] == sequenceDataset.expectedResponse[practiceBlock.thisN])
        thisExp.addData('myPract.Accuracy',         sequenceDataset.Accuracy[practiceBlock.thisN])

        # RT all trials
        sequenceDataset.RT_allTrials[practiceBlock.thisN]         = stroopResp.rt
        thisExp.addData('myPract.RT_allTrials',     sequenceDataset.RT_allTrials[practiceBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[practiceBlock.thisN] == 1:
            sequenceDataset.RT_correctTrials[practiceBlock.thisN] = stroopResp.rt
            thisExp.addData('myPract.RT_correctTrials',     sequenceDataset.RT_correctTrials[practiceBlock.thisN])
    TextComponent stroopStim
      color [set every repeat] = $str(sequenceDataset.color[practiceBlock.thisN])
      letterHeight = 5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(sequenceDataset.word[practiceBlock.thisN])
      units = deg
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    KeyboardComponent stroopResp
      allowedKeys = 's', 'c', 'm', 'l'
      correctAns = $sequenceDataset.expectedResponse[practiceBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practiceTrial_feedback
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    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if stroopResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent fb
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent sound_1
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fb_code_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)

        # number of trials with correct answer, among the trialRange specified below to discard the first 2 trials
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Py
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      Begin Routine:
        # adaptive duration
        if sequenceDataset.trial[experimentalBlock.thisN]==1:
            #sequenceDataset.trialDuration[experimentalBlock.thisN] = 0.5 + Practice_correctTrials_MdnRT   # for first 1 trial, use Median RT from practice block + 500 ms
            sequenceDataset.trialDuration[experimentalBlock.thisN] = 0.5 + Practice_correctTrials_3qrtRT  # for first 1 trial, use 3rd qrt RT from practice block + 500 ms

        else:
            sequenceDataset.trialDuration[experimentalBlock.thisN] = sequenceDataset.trialDuration[experimentalBlock.thisN-1] + sequenceDataset.step[experimentalBlock.thisN-1]   # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.word',           sequenceDataset.word[experimentalBlock.thisN])
        thisExp.addData('myExp.color',           sequenceDataset.color[experimentalBlock.thisN])
        thisExp.addData('myExp.congruent',      sequenceDataset.congruent[experimentalBlock.thisN])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.expectedResponse[experimentalBlock.thisN])
      End Routine:
        # observed response
        if stroopResp_2.keys:
            sequenceDataset.observedResponse[experimentalBlock.thisN] = stroopResp_2.keys
        thisExp.addData('myExp.observedResponse',   sequenceDataset.observedResponse[experimentalBlock.thisN])

        # trialDuration
        thisExp.addData('myExp.trialDuration',      sequenceDataset.trialDuration[experimentalBlock.thisN])



        # Accuracy
        if sequenceDataset.observedResponse[experimentalBlock.thisN]==np.nan:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(0)
        else:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == sequenceDataset.expectedResponse[experimentalBlock.thisN])
        thisExp.addData('myExp.Accuracy',         sequenceDataset.Accuracy[experimentalBlock.thisN])

        # RT all trials
        if stroopResp_2.keys:
            sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = stroopResp_2.rt
            thisExp.addData('myExp.RT_allTrials',     sequenceDataset.RT_allTrials[experimentalBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[experimentalBlock.thisN] == 1:
            sequenceDataset.RT_correctTrials[experimentalBlock.thisN] = stroopResp_2.rt
            thisExp.addData('myExp.RT_correctTrials',     sequenceDataset.RT_correctTrials[experimentalBlock.thisN])

        # adaptation
        if sequenceDataset.congruent[experimentalBlock.thisN]==0:   # for "incongruent" trials
            if sequenceDataset.Accuracy[experimentalBlock.thisN]==1:
                sequenceDataset.step[experimentalBlock.thisN]    = -0.05    # if correct response, decrease duration
            else:
                sequenceDataset.step[experimentalBlock.thisN]    = +0.05    # otherwise (incorrect or no response), increase duration
        else:  # for "congruent" trials
            sequenceDataset.step[experimentalBlock.thisN]    = 0.0  # no step change
        thisExp.addData('myExp.step',         sequenceDataset.step[experimentalBlock.thisN])
    TextComponent stroopStim_2
      color [set every repeat] = $sequenceDataset.color[experimentalBlock.thisN]
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      text [set every repeat] = $sequenceDataset.word[experimentalBlock.thisN]
      units = deg
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    KeyboardComponent stroopResp_2
      allowedKeys = 's','c','m','l','None'
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar_pract1
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      units = height
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  Routine sequenceGeneration_2
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuli_2
      Code Type = Py
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      End Routine:
        """
        This script generates sequences of stroop stimuli
        """

        import numpy as np
        import pandas as pd

        trialAll_num = 216 # number of trials (must be even)
        trialCongruent_proportion = 1/2 # proportion of congruent trials
        trialCongruent_num_expected = trialAll_num * trialCongruent_proportion # num of match trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create congruence column (list of "congruent" and "incongruent")
        # in the correct proportion and no more than 2 of the same condition (congruent, incongruent) consecutively

        # fill congruent column
        congruent = np.ones(np.int64(trialAll_num))
        toggleSwitch3 = 1
        while toggleSwitch3==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:  # first two trials: random between 0 and 1
                    congruent[trialIdx] = np.random.randint(0,2)
                else:
                    if congruent[trialIdx-1]==congruent[trialIdx-2]:
                        congruent[trialIdx]=np.abs(congruent[trialIdx-1]-1)  # either 1 = abs(0-1)   or  0 = abs(1-1)
                    else:
                        congruent[trialIdx] = np.random.randint(0,2)
            # check that 50% congruent and 50% incongruent
            if sum(congruent)==(trialCongruent_num_expected):
                toggleSwitch3 = 0

        # %% create word and color columns (combinations of words and colors)

        # pool of words and colors
        pool = ["yellow", "green", "red", "blue"]

        # initialize word and color columns
        word = np.empty(trialAll_num,dtype="<U6")
        color = np.empty(trialAll_num,dtype="<U6")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            # fill word and color columns
            for trialIdx in np.arange(0,trialAll_num):
                # for first trial, no need to worry about the preceding trial (because it does not exist)
                if trialIdx==0:
                    if congruent[trialIdx]==1:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        word[trialIdx] = np.random.choice(pool,1)[0]
                        pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                        color[trialIdx] = np.random.choice(pool_red,1)[0]

                # from second trial onwards
                else:
                    if congruent[trialIdx]==1:
                        # reduce the pool so that not the same color is picked again
                        pool_red = np.delete(pool, pool.index(word[trialIdx-1]) )  # reduce color pool
                        word[trialIdx] = np.random.choice(pool_red,1)[0]
                        color[trialIdx] = word[trialIdx]
                    else:
                        toggleSwitch = 1
                        while toggleSwitch==1:
                            word[trialIdx] = np.random.choice(pool,1)[0]
                            pool_red = np.delete(pool, pool.index(word[trialIdx]) )  # reduce color pool
                            color[trialIdx] = np.random.choice(pool_red,1)[0]
                            if word[trialIdx]!=word[trialIdx-1]  and  color[trialIdx]!=color[trialIdx-1]:
                                toggleSwitch = 0

            # check that each color is picked at least 20% of the times in the word and color columns
            wordProportion = np.empty(len(pool),dtype=float)
            colorProportion = np.empty(len(pool),dtype=float)
            for poolIdx in np.arange(0,len(pool)):
                wordProportion[poolIdx] = sum(word==pool[poolIdx])/trialAll_num
                colorProportion[poolIdx] = sum(color==pool[poolIdx])/trialAll_num
            if np.min(wordProportion)>=0.20 and np.min(colorProportion)>=0.20:
                toggleSwitch2 = 0

        # %% create expectedResponse
        # S= yellow, C= green, M= red, L= blue
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[color=="yellow"] = "s"
        expectedResponse[color=="green"]  = "c"
        expectedResponse[color=="red"]    = "m"
        expectedResponse[color=="blue"]   = "l"


        # %% create dataset
        # build a dataframe from dictionary

        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'word': word,
                                       'color': color,
                                       'congruent': congruent,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
        sequenceDataset
  Routine pretest
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    FormComponent pre_test
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Pre.csv
      Randomize = False
      Style = dark
      Text Height = 0.025
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent pre_head
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please complete the questionnaires
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    TextComponent instText_4
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [condition] = pre_test.complete
      text = Press bar to continue
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    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = pre_test.complete
      store = nothing
      syncScreenRefresh = False
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  Routine posttest1
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    FormComponent post_test
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.04
      Items = Post1.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent post_head
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please complete the questionnaires 
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    TextComponent instText_5
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [condition] = post_test.complete
      text = Press bar to continue
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    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = post_test.complete
      store = nothing
      syncScreenRefresh = False
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  Routine posttest2
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    FormComponent post_test2
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Post2.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent post_head_2
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please complete the questionnaires 
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    TextComponent instText_6
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [condition] = post_test2.complete
      text = Press bar to submit
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = post_test2.complete
      store = nothing
      syncScreenRefresh = False
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  Routine startpractice
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine starttask
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # decide duration of blank element
        if stroopResp_2.keys:  # if a response was given, wait for the remainder before next trial
            blankDuration = sequenceDataset.trialDuration[experimentalBlock.thisN] - stroopResp_2.rt
        else:                 # if no response was given, it means that the time was already over for that trial
            blankDuration = 0


        # sound of feedback
        if stroopResp_2.corr:
            sound_volume = 0
        else:
            sound_volume = 1
    StaticComponent blankPeriod
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
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    ProgressComponent progressBar_pract2
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
      units = height
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    SoundComponent sound_2
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine Instruction
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    ImageComponent instImage
      image = inst_stroop_1.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Instruction2
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    ImageComponent instImage2
      image = inst_stroop_2.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_3
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine End
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    ImageComponent image
      image = end slide.jpg
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  Routine Instruction2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startpractice
    Routine sequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine Instruction
  Routine Instruction2
  Routine starttask
  Routine sequenceGeneration_2
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
    Routine blank
  LoopTerminator experimentalBlock
  Routine End
