PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2025.1.1
  Window size (pixels) = [1536, 864]
  expName = controlGloballocal
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial',  sequenceDataset.trial[practiceBlock.thisN])
        thisExp.addData('myPract.Global', sequenceDataset.Global[practiceBlock.thisN])
        thisExp.addData('myPract.Local',  sequenceDataset.Local[practiceBlock.thisN])
        thisExp.addData('myPract.figName',sequenceDataset.figName[practiceBlock.thisN])
        thisExp.addData('myPract.switch',    sequenceDataset.switch[practiceBlock.thisN])
        thisExp.addData('myPract.condition', sequenceDataset.condition[practiceBlock.thisN])
        thisExp.addData('myPract.task',      sequenceDataset.task[practiceBlock.thisN])
        thisExp.addData('myPract.color',     sequenceDataset.color[practiceBlock.thisN])
        thisExp.addData('myPract.respCategory', sequenceDataset.respCategory[practiceBlock.thisN])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.expectedResponse[practiceBlock.thisN])
      End Routine:
        # observed response
        if globallocalResp.keys:
            sequenceDataset.observedResponse[practiceBlock.thisN] = globallocalResp.keys
        thisExp.addData('myPract.observedResponse',   sequenceDataset.observedResponse[practiceBlock.thisN])


        # Accuracy
        sequenceDataset.Accuracy[practiceBlock.thisN]             = int(sequenceDataset.observedResponse[practiceBlock.thisN] == sequenceDataset.expectedResponse[practiceBlock.thisN])
        thisExp.addData('myPract.Accuracy',         sequenceDataset.Accuracy[practiceBlock.thisN])

        # RT all trials
        sequenceDataset.RT_allTrials[practiceBlock.thisN]         = globallocalResp.rt
        thisExp.addData('myPract.RT_allTrials',     sequenceDataset.RT_allTrials[practiceBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[practiceBlock.thisN] == 1:
            sequenceDataset.RT_correctTrials[practiceBlock.thisN] = globallocalResp.rt
            thisExp.addData('myPract.RT_correctTrials',     sequenceDataset.RT_correctTrials[practiceBlock.thisN])
    ImageComponent globallocalStim
      image [set every repeat] = $'globallocal_stimuli/'+sequenceDataset.figName[practiceBlock.thisN]+'.JPG'
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent globallocalResp
      allowedKeys = 'w', 'd', 'k', 'p'
      correctAns = $sequenceDataset.expectedResponse[practiceBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practiceTrial_feedback
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    CodeComponent fbCode
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if globallocalResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent fbText
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent fbSound
      forceEndRoutine = False
      hamming = False
      saveStartStop = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fbCode_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)

        # number of trials with correct answer
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fbText_2
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent fbInstText
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70%
        you will repeat the practice block

        Press bar to continue
    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Py
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      Begin Routine:
        # trial duration
        if sequenceDataset.trial[experimentalBlock.thisN]<=2:
            sequenceDataset.trialDuration[experimentalBlock.thisN] = 0.5 + Practice_correctTrials_3qrtRT  # for first 2 trials, use 3rd qrt RT from practice block + 500 ms
        else:
            sequenceDataset.trialDuration[experimentalBlock.thisN] = sequenceDataset.trialDuration[experimentalBlock.thisN-1] + sequenceDataset.step[experimentalBlock.thisN-1]   # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial',  sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.Global', sequenceDataset.Global[experimentalBlock.thisN])
        thisExp.addData('myExp.Local',  sequenceDataset.Local[experimentalBlock.thisN])
        thisExp.addData('myExp.figName',sequenceDataset.figName[experimentalBlock.thisN])
        thisExp.addData('myExp.switch',    sequenceDataset.switch[experimentalBlock.thisN])
        thisExp.addData('myExp.condition', sequenceDataset.condition[experimentalBlock.thisN])
        thisExp.addData('myExp.task',      sequenceDataset.task[experimentalBlock.thisN])
        thisExp.addData('myExp.color',     sequenceDataset.color[experimentalBlock.thisN])
        thisExp.addData('myExp.respCategory', sequenceDataset.respCategory[experimentalBlock.thisN])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.expectedResponse[experimentalBlock.thisN])
      End Routine:
        # observed response
        if globallocalResp_2.keys:
            sequenceDataset.observedResponse[experimentalBlock.thisN] = globallocalResp_2.keys
        thisExp.addData('myExp.observedResponse',       sequenceDataset.observedResponse[experimentalBlock.thisN])

        # trialDuration
        thisExp.addData('myExp.trialDuration',          sequenceDataset.trialDuration[experimentalBlock.thisN])

        # Accuracy
        if sequenceDataset.observedResponse[experimentalBlock.thisN]==np.nan:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(0)
        else:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == sequenceDataset.expectedResponse[experimentalBlock.thisN])
        thisExp.addData('myExp.Accuracy',               sequenceDataset.Accuracy[experimentalBlock.thisN])

        # RT all trials
        if globallocalResp_2.keys:
            sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = globallocalResp_2.rt
            thisExp.addData('myExp.RT_allTrials',       sequenceDataset.RT_allTrials[experimentalBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[experimentalBlock.thisN] == 1:
            sequenceDataset.RT_correctTrials[experimentalBlock.thisN] = globallocalResp_2.rt
            thisExp.addData('myExp.RT_correctTrials',   sequenceDataset.RT_correctTrials[experimentalBlock.thisN])

        # adaptation
        sequenceDataset.step[experimentalBlock.thisN]    = 0.0  # no step change
        thisExp.addData('myExp.step',                   sequenceDataset.step[experimentalBlock.thisN])
    ImageComponent globallocalStim_2
      image [set every repeat] = $'globallocal_stimuli/'+sequenceDataset.figName[experimentalBlock.thisN]+'.JPG'
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
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    KeyboardComponent globallocalResp_2
      allowedKeys = 'w','d','k','p','None'
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      units = height
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  Routine blank
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # decide duration of blank element
        if globallocalResp_2.keys:  # if a response was given, wait for the remainder before next trial
            blankDuration = sequenceDataset.trialDuration[experimentalBlock.thisN] - globallocalResp_2.rt
        else:                 # if no response was given, it means that the time was already over for that trial
            blankDuration = 0


        # sound of feedback
        if globallocalResp_2.corr:
            sound_volume = 0
        else:
            sound_volume = 1
    StaticComponent blankPeriod
      saveData = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
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    ProgressComponent progressBar_2
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
      units = height
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    SoundComponent fbSound_2
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceSequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF GLOBAL-LOCAL STIMULI
        """

        import numpy as np
        import pandas as pd

        # control version:
        # the first half is Task A, and the second half is Task B
        # therefore there is only one switch trial in the middle

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 20 # number of trials (must be even)

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create switch column (list of 1 for "switch" and 0 for "repeat")
        # criteria:
        # 1. the first trial is 999 (neither switch or repeat)
        # 2. only one switch trial in the middle (i.e., beginning of second half)

        switch = np.zeros(trialAll_num,dtype=int)   # initialize
        switch[0] = -999  # first trial is neither switch or repeat
        switch[np.int64(trialAll_num/2)] = 1 # trial at the beginning of the second half is the only switch

        task_Global = np.repeat(np.random.permutation([0, 1]), np.int64(trialAll_num/2))

        # Local task is the opposite of task_Global
        task_Local = np.abs(task_Global-1)

        # create condition, task, color string variables
        condition= np.empty(trialAll_num,dtype="<U6") # initialize
        condition[np.where(switch==0)] = "repeat"
        condition[np.where(switch==1)] = "switch"

        task     = np.empty(trialAll_num,dtype="<U6") # initialize
        task[np.where(task_Global)] = "Global"
        task[np.where(task_Local)] = "Local"

        color    = np.empty(trialAll_num,dtype="<U4") # initialize
        color[np.where(task_Global)] = "blue"
        color[np.where(task_Local)]  = "yell"

        # %% create Global, Local, figName columns
        # criteria
        # 1. no same Global-Local pair (at least one of them is different) on two consecutive trials that have the same task (hence same color)
        # 2. when the same task is presented 3 times in a row (i.e., 1 switch followed by 2 repeat trials, yielding 3 consecutive Local trials) no more of 2 consecutive trials with the same response category (e.g., triangle)
        # 3. each response category in same proportion (20%)
        # 4. each shape is used at least 10% of the times for Global (same for Local)

        """
        b.1 Assign Stimuli Pool
        """

        # pool of shapes
        shape_pool_long  = ["triangle", "cross", "square", "circle"]  # long name
        shape_pool_short = ["t",        "x",     "s",      "c"]       # short name

        # initialize Global, Local, and figName columns
        Global  = np.zeros(trialAll_num,dtype="<U8")
        Local = np.empty(trialAll_num,dtype="<U8")
        figName   = np.empty(trialAll_num,dtype="<U7")
        respCategory = np.empty(trialAll_num,dtype="<U8")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1: # 1st trial
                    # pick any Global and Local
                    Global[trialIdx]  = np.random.choice(shape_pool_long,1)[0]
                    Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]

                elif trial[trialIdx]==2: # 2nd trial
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the figName can be even the same as the previous one because the task (and the color) changes
                        # pick any Global and Local
                        Global[trialIdx]  = np.random.choice(shape_pool_long,1)[0]
                        Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                    else: # if current task is the same as the previous task (thus also same color)
                        # "criterion 1" make sure that Global AND/OR Local are different from previous trial (i.e., remove those stimuli from the pools and draw from the reduced pool)
                        reduceChoice = np.random.randint(1,4)  # Which pool (Local or Global or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only Global pool, 2=reduce only Local pool, 3=reduce both pools
                        shape_pool_long_red  = np.delete(shape_pool_long,   shape_pool_long.index(Global[trialIdx-1]) )  # reduced pool
                        if reduceChoice==1:
                            Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                            Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                        elif reduceChoice==2:
                            Global[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                            Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                        elif reduceChoice==3:
                            Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                            Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]


                elif trial[trialIdx]>=3: # 3rd trial and onwards
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the figName can be even the same as the previous one because the task (and the color) changes
                        # pick any Global and Local
                        Global[trialIdx]  = np.random.choice(shape_pool_long,1)[0]
                        Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]

                    else: # if current task is the same as the previous task (thus also same color)
                        if respCategory[trialIdx-1]!=respCategory[trialIdx-2]:  # if response Category was not the same in the previous two trials --> there is NO risk of having three times in a row the same response Category (e.g., vowel)
                            # "criterion 1" make sure that Global AND/OR Local are different from previous trial (i.e., remove those stimuli from the pools and draw from the reduced pool)
                            reduceChoice = np.random.randint(1,4)  # Which pool (Local or Global or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only Global pool, 2=reduce only Local pool, 3=reduce both pools
                            shape_pool_long_red  = np.delete(shape_pool_long,   shape_pool_long.index(Global[trialIdx-1]) )  # reduced pool
                            if reduceChoice==1:
                                Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                            elif reduceChoice==2:
                                Global[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                            elif reduceChoice==3:
                                Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]


                        else:    # if response Category was the same in the previous two trials --> there is risk of having three times in a row the same response Category (e.g., triangle), so we need to exclude the stimuli compatible with this response category (e.g., triangle)
                            # "criteria 1 and 2"
                            shape_pool_long_red  = np.delete(shape_pool_long,   shape_pool_long.index(respCategory[trialIdx-1]) )  # reduced pool
                            if task[trialIdx]=="Global":
                                # pick any local but global should be from the reduced pool
                                Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                            elif task[trialIdx]=="Local":
                                # pick any global but local should be from the reduced pool
                                Global[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]

                # create figName of Local + Global
                figName[trialIdx] = color[trialIdx] + "-" + shape_pool_short[shape_pool_long.index(Global[trialIdx])] + shape_pool_short[shape_pool_long.index(Local[trialIdx])]

                # now that Global and Local have been chosen, update responseCategory. This will be useful for trialIdx+1
                if task[trialIdx]=="Global":
                    respCategory[trialIdx] = Global[trialIdx]
                elif task[trialIdx]=="Local":
                    respCategory[trialIdx] = Local[trialIdx]

            # criterion "3"
            # proportion of expected response, to make sure they are at least (0.20)
            proportionCheck  = np.zeros(4,dtype="float") # initialize
            for poolIdx in np.arange(0,len(shape_pool_long)):
                proportionCheck[poolIdx] = sum(respCategory==shape_pool_long[poolIdx]) / trialAll_num

            # "criterion 4"
            # check that each shape is picked at least 10% of the times in Global (same for Local)
            GlobalProportion  = np.empty(len(shape_pool_long),dtype=float)
            LocalProportion = np.empty(len(shape_pool_long),dtype=float)
            for poolIdx in np.arange(0,len(shape_pool_long)):
                GlobalProportion[poolIdx] = sum(Global==shape_pool_long[poolIdx]) / trialAll_num
                LocalProportion[poolIdx]  = sum(Local==shape_pool_long[poolIdx]) / trialAll_num

            # implements the two checks above (keep asking for a new sequence if either of the two checks fails)
            if sum(proportionCheck>=0.20)==4 and np.min(GlobalProportion)>=0.10 and np.min(LocalProportion)>=0.10:
                toggleSwitch2 = 0

        """
        c. Assign Response Keys
        """

        # %% create expectedResponse
        # w = triangle
        # d = cross
        # k = square
        # p = circle

        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[respCategory=="triangle"]     = "w"
        expectedResponse[respCategory=="cross"]        = "d"
        expectedResponse[respCategory=="square"]       = "k"
        expectedResponse[respCategory=="circle"]       = "p"

        """
        d. Initialise DataFrame
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'Global': Global,
                                       'Local': Local,
                                       'figName': figName,
                                       'switch': switch,
                                       'condition': condition,
                                       'task': task,
                                       'color': color,
                                       'respCategory': respCategory,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine taskSequenceGeneration
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode_2
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF GLOBAL-LOCAL STIMULI
        """

        import numpy as np
        import pandas as pd

        # control version:
        # the first half is Task A, and the second half is Task B
        # therefore there is only one switch trial in the middle

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 216 # number of trials (must be even)

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create switch column (list of 1 for "switch" and 0 for "repeat")
        # criteria:
        # 1. the first trial is 999 (neither switch or repeat)
        # 2. only one switch trial in the middle (i.e., beginning of second half)

        switch = np.zeros(trialAll_num,dtype=int)   # initialize
        switch[0] = -999  # first trial is neither switch or repeat
        switch[np.int64(trialAll_num/2)] = 1 # trial at the beginning of the second half is the only switch

        task_Global = np.repeat(np.random.permutation([0, 1]), np.int64(trialAll_num/2))

        # Local task is the opposite of task_Global
        task_Local = np.abs(task_Global-1)

        # create condition, task, color string variables
        condition= np.empty(trialAll_num,dtype="<U6") # initialize
        condition[np.where(switch==0)] = "repeat"
        condition[np.where(switch==1)] = "switch"

        task     = np.empty(trialAll_num,dtype="<U6") # initialize
        task[np.where(task_Global)] = "Global"
        task[np.where(task_Local)] = "Local"

        color    = np.empty(trialAll_num,dtype="<U4") # initialize
        color[np.where(task_Global)] = "blue"
        color[np.where(task_Local)]  = "yell"

        # %% create Global, Local, figName columns
        # criteria
        # 1. no same Global-Local pair (at least one of them is different) on two consecutive trials that have the same task (hence same color)
        # 2. when the same task is presented 3 times in a row (i.e., 1 switch followed by 2 repeat trials, yielding 3 consecutive Local trials) no more of 2 consecutive trials with the same response category (e.g., triangle)
        # 3. each response category in same proportion (20%)
        # 4. each shape is used at least 10% of the times for Global (same for Local)

        """
        b.1 Assign Stimuli Pool
        """

        # pool of shapes
        shape_pool_long  = ["triangle", "cross", "square", "circle"]  # long name
        shape_pool_short = ["t",        "x",     "s",      "c"]       # short name

        # initialize Global, Local, and figName columns
        Global  = np.zeros(trialAll_num,dtype="<U8")
        Local = np.empty(trialAll_num,dtype="<U8")
        figName   = np.empty(trialAll_num,dtype="<U7")
        respCategory = np.empty(trialAll_num,dtype="<U8")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1: # 1st trial
                    # pick any Global and Local
                    Global[trialIdx]  = np.random.choice(shape_pool_long,1)[0]
                    Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]

                elif trial[trialIdx]==2: # 2nd trial
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the figName can be even the same as the previous one because the task (and the color) changes
                        # pick any Global and Local
                        Global[trialIdx]  = np.random.choice(shape_pool_long,1)[0]
                        Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                    else: # if current task is the same as the previous task (thus also same color)
                        # "criterion 1" make sure that Global AND/OR Local are different from previous trial (i.e., remove those stimuli from the pools and draw from the reduced pool)
                        reduceChoice = np.random.randint(1,4)  # Which pool (Local or Global or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only Global pool, 2=reduce only Local pool, 3=reduce both pools
                        shape_pool_long_red  = np.delete(shape_pool_long,   shape_pool_long.index(Global[trialIdx-1]) )  # reduced pool
                        if reduceChoice==1:
                            Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                            Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                        elif reduceChoice==2:
                            Global[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                            Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                        elif reduceChoice==3:
                            Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                            Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]


                elif trial[trialIdx]>=3: # 3rd trial and onwards
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the figName can be even the same as the previous one because the task (and the color) changes
                        # pick any Global and Local
                        Global[trialIdx]  = np.random.choice(shape_pool_long,1)[0]
                        Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]

                    else: # if current task is the same as the previous task (thus also same color)
                        if respCategory[trialIdx-1]!=respCategory[trialIdx-2]:  # if response Category was not the same in the previous two trials --> there is NO risk of having three times in a row the same response Category (e.g., vowel)
                            # "criterion 1" make sure that Global AND/OR Local are different from previous trial (i.e., remove those stimuli from the pools and draw from the reduced pool)
                            reduceChoice = np.random.randint(1,4)  # Which pool (Local or Global or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only Global pool, 2=reduce only Local pool, 3=reduce both pools
                            shape_pool_long_red  = np.delete(shape_pool_long,   shape_pool_long.index(Global[trialIdx-1]) )  # reduced pool
                            if reduceChoice==1:
                                Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                            elif reduceChoice==2:
                                Global[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                            elif reduceChoice==3:
                                Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]


                        else:    # if response Category was the same in the previous two trials --> there is risk of having three times in a row the same response Category (e.g., triangle), so we need to exclude the stimuli compatible with this response category (e.g., triangle)
                            # "criteria 1 and 2"
                            shape_pool_long_red  = np.delete(shape_pool_long,   shape_pool_long.index(respCategory[trialIdx-1]) )  # reduced pool
                            if task[trialIdx]=="Global":
                                # pick any local but global should be from the reduced pool
                                Global[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                            elif task[trialIdx]=="Local":
                                # pick any global but local should be from the reduced pool
                                Global[trialIdx] = np.random.choice(shape_pool_long,1)[0]
                                Local[trialIdx] = np.random.choice(shape_pool_long_red,1)[0]

                # create figName of Local + Global
                figName[trialIdx] = color[trialIdx] + "-" + shape_pool_short[shape_pool_long.index(Global[trialIdx])] + shape_pool_short[shape_pool_long.index(Local[trialIdx])]

                # now that Global and Local have been chosen, update responseCategory. This will be useful for trialIdx+1
                if task[trialIdx]=="Global":
                    respCategory[trialIdx] = Global[trialIdx]
                elif task[trialIdx]=="Local":
                    respCategory[trialIdx] = Local[trialIdx]

            # criterion "3"
            # proportion of expected response, to make sure they are at least (0.20)
            proportionCheck  = np.zeros(4,dtype="float") # initialize
            for poolIdx in np.arange(0,len(shape_pool_long)):
                proportionCheck[poolIdx] = sum(respCategory==shape_pool_long[poolIdx]) / trialAll_num

            # "criterion 4"
            # check that each shape is picked at least 10% of the times in Global (same for Local)
            GlobalProportion  = np.empty(len(shape_pool_long),dtype=float)
            LocalProportion = np.empty(len(shape_pool_long),dtype=float)
            for poolIdx in np.arange(0,len(shape_pool_long)):
                GlobalProportion[poolIdx] = sum(Global==shape_pool_long[poolIdx]) / trialAll_num
                LocalProportion[poolIdx]  = sum(Local==shape_pool_long[poolIdx]) / trialAll_num

            # implements the two checks above (keep asking for a new sequence if either of the two checks fails)
            if sum(proportionCheck>=0.20)==4 and np.min(GlobalProportion)>=0.10 and np.min(LocalProportion)>=0.10:
                toggleSwitch2 = 0

        """
        c. Assign Response Keys
        """

        # %% create expectedResponse
        # w = triangle
        # d = cross
        # k = square
        # p = circle

        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[respCategory=="triangle"]     = "w"
        expectedResponse[respCategory=="cross"]        = "d"
        expectedResponse[respCategory=="square"]       = "k"
        expectedResponse[respCategory=="circle"]       = "p"

        """
        d. Initialise DataFrame
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'Global': Global,
                                       'Local': Local,
                                       'figName': figName,
                                       'switch': switch,
                                       'condition': condition,
                                       'task': task,
                                       'color': color,
                                       'respCategory': respCategory,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine instructions
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    ImageComponent instImage
      image = instGL_1.JPG
      pos = (0, 0.1)
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction2
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    ImageComponent instImage_2
      image = instGL_2.JPG
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine startTask
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    TextComponent startTask_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startPractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    ImageComponent endImage
      image = endSlide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine instruction2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startPractice
    Routine practiceSequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instructions
  Routine instruction2
  Routine startTask
  Routine taskSequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
    Routine blank
  LoopTerminator experimentalBlock
  Routine end
