PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = adaptiveLetterdigit
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.loc[practiceBlock.thisN, 'trial'])
        thisExp.addData('myPract.digit', sequenceDataset.loc[practiceBlock.thisN, 'digit'])
        thisExp.addData('myPract.letter', sequenceDataset.loc[practiceBlock.thisN, 'letter'])
        thisExp.addData('myPract.pair', sequenceDataset.loc[practiceBlock.thisN, 'pair'])
        thisExp.addData('myPract.switch', sequenceDataset.loc[practiceBlock.thisN, 'switch'])
        thisExp.addData('myPract.condition', sequenceDataset.loc[practiceBlock.thisN, 'condition'])
        thisExp.addData('myPract.task', sequenceDataset.loc[practiceBlock.thisN, 'task'])
        thisExp.addData('myPract.color', sequenceDataset.loc[practiceBlock.thisN, 'color'])
        thisExp.addData('myPract.respCategory', sequenceDataset.loc[practiceBlock.thisN, 'respCategory'])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if letterdigitResp.keys:
            sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] = letterdigitResp.keys
        thisExp.addData('myPract.observedResponse', sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'])

        # Accuracy
        sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] == sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
        thisExp.addData('myPract.Accuracy', sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'])

        # RT all trials
        sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'] = letterdigitResp.rt
        thisExp.addData('myPract.RT_allTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'])

        # RT correct trials
        if sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] == 1:
            sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'] = letterdigitResp.rt
            thisExp.addData('myPract.RT_correctTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'])
    TextComponent letterdigitStim
      color [set every repeat] = $str(sequenceDataset.loc[practiceBlock.thisN, 'color'])
      font = Lucida Sans Typewriter
      letterHeight = 5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(sequenceDataset.loc[practiceBlock.thisN, 'pair'])
      units = deg
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    KeyboardComponent letterdigitResp
      allowedKeys = 'f','j'
      correctAns = $sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practiceTrial_feedback
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    CodeComponent fbCode
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if letterdigitResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent fbText
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent fbSound
      forceEndRoutine = False
      hamming = False
      saveStartStop = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fbCode_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)

        # number of trials with correct answer
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fbText_2
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent fbInstText
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70%
        you will repeat the practice block

        Press bar to continue
    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Py
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      Begin Routine:
        # adaptive duration
        if sequenceDataset.loc[experimentalBlock.thisN, 'trial'] <= 2:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = 0.5 + Practice_correctTrials_3qrtRT  # for first 2 trials, use 3rd qrt RT from practice block + 500 ms
        else:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = sequenceDataset.loc[experimentalBlock.thisN-1, 'trialDuration'] + sequenceDataset.loc[experimentalBlock.thisN-1, 'step']  # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial', sequenceDataset.loc[experimentalBlock.thisN, 'trial'])
        thisExp.addData('myExp.digit', sequenceDataset.loc[experimentalBlock.thisN, 'digit'])
        thisExp.addData('myExp.letter', sequenceDataset.loc[experimentalBlock.thisN, 'letter'])
        thisExp.addData('myExp.pair', sequenceDataset.loc[experimentalBlock.thisN, 'pair'])
        thisExp.addData('myExp.switch', sequenceDataset.loc[experimentalBlock.thisN, 'switch'])
        thisExp.addData('myExp.condition', sequenceDataset.loc[experimentalBlock.thisN, 'condition'])
        thisExp.addData('myExp.task', sequenceDataset.loc[experimentalBlock.thisN, 'task'])
        thisExp.addData('myExp.color', sequenceDataset.loc[experimentalBlock.thisN, 'color'])
        thisExp.addData('myExp.respCategory', sequenceDataset.loc[experimentalBlock.thisN, 'respCategory'])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if letterdigitResp_2.keys:
            sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] = letterdigitResp_2.keys
        thisExp.addData('myExp.observedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'])

        # trialDuration
        thisExp.addData('myExp.trialDuration', sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'])

        # Accuracy
        if pd.isna(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse']):
            sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(0)
        else:
            sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] == sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
        thisExp.addData('myExp.Accuracy', sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'])

        # RT all trials
        if letterdigitResp_2.keys:
            sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'] = letterdigitResp_2.rt
            thisExp.addData('myExp.RT_allTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'])

        # RT correct trials
        if sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] == 1:
            sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'] = letterdigitResp_2.rt
            thisExp.addData('myExp.RT_correctTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'])

        # adaptation
        if sequenceDataset.loc[experimentalBlock.thisN, 'switch'] == 1:  # for "switch" trials
            if sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] == 1:
                sequenceDataset.loc[experimentalBlock.thisN, 'step'] = -0.05  # if correct response, decrease duration
            else:
                sequenceDataset.loc[experimentalBlock.thisN, 'step'] = +0.05  # otherwise (incorrect or no response), increase duration
        else:  # for "repeat" trials
            sequenceDataset.loc[experimentalBlock.thisN, 'step'] = 0.0  # no step change

        thisExp.addData('myExp.step', sequenceDataset.loc[experimentalBlock.thisN, 'step'])
    TextComponent letterdigitStim_2
      color [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'color']
      font = Lucida Sans Typewriter
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      text [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'pair']
      units = deg
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    KeyboardComponent letterdigitResp_2
      allowedKeys = 'f','j'
      correctAns = $sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'trial']/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      units = height
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    CodeComponent expAfterKeyPress
      Code Type = Auto->JS
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      Each Frame:
        # force stimuli to disappear after keypress
        if letterdigitResp_2.keys:
            letterdigitStim_2.color = [0, 0, 0]
    CodeComponent expTone
      Code Type = Auto->JS
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      Before Experiment:
        # sound parameters
        errorBeep = sound.Sound(600, secs = 0.050, stereo=True, hamming=False, volume = 1)
      Begin Routine:
        # for each trial reset error beep parameters
        toggleBeep = False
        tonePlayed = False
      Each Frame:
        # determine if to play the error beep (within trial duration)
        if len(letterdigitResp_2.keys)>0 and letterdigitResp_2.corr!=1:
            toggleBeep = True # incorrect response key within the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
      End Routine:
        # determine if to play the error beep (at end of trial duration)
        if letterdigitResp_2.keys==None and letterdigitResp_2.corr!=1:
            toggleBeep = True # no response (where one, correct, was expected) by the end of the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
  Routine practiceSequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF LETTER-DIGIT STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 20 # number of trials (must be even)
        trialSwitch_proportion = 1/2 # proportion of switch trials
        trialSwitch_num_expected = trialAll_num * trialSwitch_proportion # num of switch trials

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create switch column (list of 1 for "switch" and 0 for "repeat")
        # criteria:
        # 1. the first trial is 999 (neither switch or repeat)
        # 2. max two consecutive switch or repeat (which also means max 3 consecutive same task in case switch-repeat-repeat)
        # 3. same number of Switch and Repeat (with a tolerance of 1 trial as the first one is neither switch or repeat)

        switch = np.empty(trialAll_num,dtype=int)   # initialize
        task_digit = np.zeros(trialAll_num,dtype=int) # initialize

        toggleSwitch = 1
        while toggleSwitch==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1:       # 1st trial
                    switch[trialIdx] = -999  # neither switch or repeat
                    task_digit[trialIdx] = np.random.randint(0,2)          # choose task at random

                else:
                    # fill in the switch variable
                    if trial[trialIdx]==2:   # 2nd trial
                        switch[trialIdx] = np.random.randint(0,2)          # random choice between 0 and 1
                    else:                    # 3rd trial onwards
                        if switch[trialIdx-1]==switch[trialIdx-2]:         # if the previous two trials are the same
                            switch[trialIdx]=np.abs(switch[trialIdx-1]-1)  # pick the opposite trial
                        else:                                              # if not the same with previous two trial
                            switch[trialIdx] = np.random.randint(0,2)      # choose at random

                    # fill in the task_digit variable depending on the switch variable
                    if switch[trialIdx]==1:     # if switch trial
                        task_digit[trialIdx] = np.abs(task_digit[trialIdx-1]-1) # pick the opposite task
                    else:                       # if repeat trial
                        task_digit[trialIdx] = task_digit[trialIdx-1]           # pick the same task

            # evaluate if number of switch is half of trial number with a tolerance of 1
            if sum(switch==1)==(trialSwitch_num_expected) or sum(switch==1)==(trialSwitch_num_expected)-1:
                # evaluate if number of task_digit is 50% of trials. This means that digit and letter trials will be equally split in the block
                if sum(task_digit)==(trialSwitch_num_expected):
                    toggleSwitch = 0

        # letter task is the opposite of task_digit
        task_letter = np.abs(task_digit-1)

        # create condition, task, color string variables
        condition= np.empty(trialAll_num,dtype="<U6") # initialize
        condition[np.where(switch==0)] = "repeat"
        condition[np.where(switch==1)] = "switch"

        task     = np.empty(trialAll_num,dtype="<U6") # initialize
        task[np.where(task_digit)] = "digit"
        task[np.where(task_letter)] = "letter"

        color    = np.empty(trialAll_num,dtype="<U6") # initialize
        color[np.where(task_digit)] = "purple"
        color[np.where(task_letter)] = "green"

        colorHex = np.empty(trialAll_num,dtype="<U7") # initialize
        colorHex[np.where(task_digit)] = "#FF00FF"  # purple
        colorHex[np.where(task_letter)] = "#00FF00"  # green

        # %% create digit, letter, pair columns
        # criteria
        # 1. no same digit-letter pair (at least one of them is different) on two consecutive trials that have the same task (and same color)
        # 2. when the same task is presented 3 times in a row (i.e., 1 switch followed by 2 repeat trials, yielding 3 consecutive letter trials) no more of 2 consecutive trials with the same response category (e.g., vowel)
        # 3. each response category in same proportion
        # 4. each digit (same for letter) is used at least 5% of the times

        """
        b.1 Assign Stimuli Pool
        """

        # pool of digit letter stimuli
        letter_vowel_pool     = ["A", "E", "I", "U"]
        letter_consonant_pool = ["H", "K", "M", "R"]
        letter_pool = letter_vowel_pool + letter_consonant_pool
        digit_even_pool = [2, 4, 6, 8]
        digit_odd_pool =  [3, 5, 7, 9]
        digit_pool = digit_even_pool + digit_odd_pool

        # initialize digit, letter, and pair columns
        digit  = np.zeros(trialAll_num,dtype="int")
        letter = np.empty(trialAll_num,dtype="<U6")
        pair   = np.empty(trialAll_num,dtype="<U6")
        respCategory = np.empty(trialAll_num,dtype="<U9")

        # initialize vowel, consonant, even, odd // as example, vowel will show 1 if the letter is vowel and 0 otherwise. These vars will be useful to count how many consecutive times we expect a certain response (e.g., vowel)
        vowel      = np.zeros(trialAll_num,dtype="int")
        consonant  = np.zeros(trialAll_num,dtype="int")
        even       = np.zeros(trialAll_num,dtype="int")
        odd        = np.zeros(trialAll_num,dtype="int")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1: # 1st trial
                    # pick any digit and letter
                    digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                    letter[trialIdx] = np.random.choice(letter_pool,1)[0]

                elif trial[trialIdx]==2: # 2nd trial
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the pair can be even the same as the previous one because the task (and the color) changes
                        # pick any digit and letter
                        digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                        letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                    else: # if current task is the same as the previous task (thus also same color)
                        # "criterion 1" make sure that digit AND/OR letter are different from previous trial (i.e., remove those stimuli from the pools and draw from the resuced pool)
                        reduceChoice = np.random.randint(1,4)  # Which pool (letter or digit or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only digit pool, 2=reduce only letter pool, 3=reduce both pools
                        if reduceChoice==1:
                            digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                            digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                            letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                        elif reduceChoice==2:
                            digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                            letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                            letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]
                        elif reduceChoice==3:
                            digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                            digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                            letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                            letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]

                elif trial[trialIdx]>=3: # 3rd trial and onwards
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the pair can be even the same as the previous one because the task (and the color) changes
                        # pick any digit and letter
                        digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                        letter[trialIdx] = np.random.choice(letter_pool,1)[0]

                    else: # if current task is the same as the previous task (thus also same color)
                        if respCategory[trialIdx-1]!=respCategory[trialIdx-2]:  # if response Category was not the same in the previous two trials --> there is NO risk of having three times in a row the same response Category (e.g., vowel)
                            # "criterion 1" make sure that digit AND/OR letter are different from previous trial (i.e., remove those stimuli from the pools and draw from the resuced pool)
                            reduceChoice = np.random.randint(1,4)  # Which pool (letter or digit or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only digit pool, 2=reduce only letter pool, 3=reduce both pools
                            if reduceChoice==1:
                                digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                                digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                                letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                            elif reduceChoice==2:
                                digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                                letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                                letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]
                            elif reduceChoice==3:
                                digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                                digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                                letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                                letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]

                        else:    # if response Category was the same in the previous two trials --> there is risk of having three times in a row the same response Category (e.g., vowel), so we need to exclude the stimuli compatible with this response category (e.g., all vowels)
                            # "criteria 1 and 2"
                            if respCategory[trialIdx-1]=="vowel":
                                # pick any digit, but draw the letter from the consonant pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_consonant_pool,1)[0]
                            elif respCategory[trialIdx-1]=="consonant":
                                # pick any digit, but draw the letter from the vowel pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_vowel_pool,1)[0]
                            elif respCategory[trialIdx-1]=="even":
                                # pick any letter, but draw the digit from the odd pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx] = np.random.choice(digit_odd_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                            elif respCategory[trialIdx-1]=="odd":
                                # pick any letter, but draw the digit from the even pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx] = np.random.choice(digit_even_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_pool,1)[0]

                # create pair of letter + digit
                pair[trialIdx] = letter[trialIdx] + str(digit[trialIdx])

                # now that digit and letter have been chosen, update responseCategory.
                if np.isin(letter[trialIdx],letter_vowel_pool):  vowel[trialIdx] = 1
                else:                                            vowel[trialIdx] = 0
                if np.isin(letter[trialIdx],letter_consonant_pool): consonant[trialIdx] = 1
                else:                                               consonant[trialIdx] = 0
                if np.isin(digit[trialIdx],digit_even_pool):  even[trialIdx] = 1
                else:                                         even[trialIdx] = 0
                if np.isin(digit[trialIdx],digit_odd_pool): odd[trialIdx] = 1
                else:                                       odd[trialIdx] = 0
                if task[trialIdx]=="letter":
                    if vowel[trialIdx]==1:
                        respCategory[trialIdx] = "vowel"
                    elif consonant[trialIdx]==1:
                        respCategory[trialIdx] = "consonant"
                elif task[trialIdx]=="digit":
                    if even[trialIdx]==1:
                        respCategory[trialIdx] = "even"
                    elif odd[trialIdx]==1:
                        respCategory[trialIdx] = "odd"

            # criterion "3"
            # multiply task_letter (1=letter task, 0=otherwise) with vowel(1=vowel, 0=otherwise). Their product will identify letter trials with vowel (i.e., it will ignore digit trials where the letter is a vowel). Same concept for the other 3 cases
            task_letter_vowel     = task_letter * vowel
            task_letter_consonant = task_letter * consonant
            task_digit_even       = task_digit * even
            task_digit_odd        = task_digit * odd
            # proportion of expected response, to make sure they are the same (0.25)
            proportionCheck  = np.zeros(4,dtype="float") # initialize
            proportionCheck[0] = sum(task_letter_vowel) / trialAll_num
            proportionCheck[1] = sum(task_letter_consonant) / trialAll_num
            proportionCheck[2] = sum(task_digit_even) / trialAll_num
            proportionCheck[3] = sum(task_digit_odd) / trialAll_num

            # "criterion 4"
            # check that each digit (same for letter) is picked at least 5% of the times
            digitProportion  = np.empty(len(digit_pool),dtype=float)
            letterProportion = np.empty(len(letter_pool),dtype=float)
            for poolIdx in np.arange(0,len(digit_pool)):
                digitProportion[poolIdx]  = sum(digit==digit_pool[poolIdx])/trialAll_num
                letterProportion[poolIdx] = sum(letter==letter_pool[poolIdx])/trialAll_num

            # implements the two checks above (keep asking for a new sequence if either of the two checks fails)
            if sum(proportionCheck==0.25)==4 and np.min(digitProportion)>=0.05 and np.min(letterProportion)>=0.05:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # %% create expectedResponse
        # "f" = consonant & odd
        # "j" = vowel & even

        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[np.logical_or(respCategory=="even",respCategory=="vowel")]     = "j"
        expectedResponse[np.logical_or(respCategory=="odd", respCategory=="consonant")] = "f"

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'digit': digit,
                                       'even': even,
                                       'odd': odd,
                                       'letter': letter,
                                       'vowel': vowel,
                                       'consonant': consonant,
                                       'pair': pair,
                                       'switch': switch,
                                       'condition': condition,
                                       'task': task,
                                       'task_digit': task_digit,
                                       'task_letter': task_letter,
                                       'task_letter_vowel': task_letter_vowel,
                                       'task_letter_consonant': task_letter_consonant,
                                       'task_digit_even': task_digit_even,
                                       'task_digit_odd': task_digit_odd,
                                       'color': color,
                                       'colorHex': colorHex,
                                       'respCategory': respCategory,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine instructions
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    ImageComponent instImage
      image = instLD_1.jpg
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instructions2
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    ImageComponent instImage_2
      image = instLD_2.jpg
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine startPractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startTask
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    TextComponent startTask_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taskSequenceGeneration
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuli_2
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF LETTER-DIGIT STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 216 # number of trials (must be even)
        trialSwitch_proportion = 1/2 # proportion of switch trials
        trialSwitch_num_expected = trialAll_num * trialSwitch_proportion # num of switch trials

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %% create switch column (list of 1 for "switch" and 0 for "repeat")
        # criteria:
        # 1. the first trial is 999 (neither switch or repeat)
        # 2. max two consecutive switch or repeat (which also means max 3 consecutive same task in case switch-repeat-repeat)
        # 3. same number of Switch and Repeat (with a tolerance of 1 trial as the first one is neither switch or repeat)

        switch = np.empty(trialAll_num,dtype=int)   # initialize
        task_digit = np.zeros(trialAll_num,dtype=int) # initialize

        toggleSwitch = 1
        while toggleSwitch==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1:       # 1st trial
                    switch[trialIdx] = -999  # neither switch or repeat
                    task_digit[trialIdx] = np.random.randint(0,2)          # choose task at random

                else:
                    # fill in the switch variable
                    if trial[trialIdx]==2:   # 2nd trial
                        switch[trialIdx] = np.random.randint(0,2)          # random choice between 0 and 1
                    else:                    # 3rd trial onwards
                        if switch[trialIdx-1]==switch[trialIdx-2]:         # if the previous two trials are the same
                            switch[trialIdx]=np.abs(switch[trialIdx-1]-1)  # pick the opposite trial
                        else:                                              # if not the same with previous two trial
                            switch[trialIdx] = np.random.randint(0,2)      # choose at random

                    # fill in the task_digit variable depending on the switch variable
                    if switch[trialIdx]==1:     # if switch trial
                        task_digit[trialIdx] = np.abs(task_digit[trialIdx-1]-1) # pick the opposite task
                    else:                       # if repeat trial
                        task_digit[trialIdx] = task_digit[trialIdx-1]           # pick the same task

            # evaluate if number of switch is half of trial number with a tolerance of 1
            if sum(switch==1)==(trialSwitch_num_expected) or sum(switch==1)==(trialSwitch_num_expected)-1:
                # evaluate if number of task_digit is 50% of trials. This means that digit and letter trials will be equally split in the block
                if sum(task_digit)==(trialSwitch_num_expected):
                    toggleSwitch = 0

        # letter task is the opposite of task_digit
        task_letter = np.abs(task_digit-1)

        # create condition, task, color string variables
        condition= np.empty(trialAll_num,dtype="<U6") # initialize
        condition[np.where(switch==0)] = "repeat"
        condition[np.where(switch==1)] = "switch"

        task     = np.empty(trialAll_num,dtype="<U6") # initialize
        task[np.where(task_digit)] = "digit"
        task[np.where(task_letter)] = "letter"

        color    = np.empty(trialAll_num,dtype="<U6") # initialize
        color[np.where(task_digit)] = "purple"
        color[np.where(task_letter)] = "green"

        colorHex = np.empty(trialAll_num,dtype="<U7") # initialize
        colorHex[np.where(task_digit)] = "#FF00FF"  # purple
        colorHex[np.where(task_letter)] = "#00FF00"  # green

        # %% create digit, letter, pair columns
        # criteria
        # 1. no same digit-letter pair (at least one of them is different) on two consecutive trials that have the same task (and same color)
        # 2. when the same task is presented 3 times in a row (i.e., 1 switch followed by 2 repeat trials, yielding 3 consecutive letter trials) no more of 2 consecutive trials with the same response category (e.g., vowel)
        # 3. each response category in same proportion
        # 4. each digit (same for letter) is used at least 5% of the times

        """
        b.1 Assign Stimuli Pool
        """

        # pool of digit letter stimuli
        letter_vowel_pool     = ["A", "E", "I", "U"]
        letter_consonant_pool = ["H", "K", "M", "R"]
        letter_pool = letter_vowel_pool + letter_consonant_pool
        digit_even_pool = [2, 4, 6, 8]
        digit_odd_pool =  [3, 5, 7, 9]
        digit_pool = digit_even_pool + digit_odd_pool

        # initialize digit, letter, and pair columns
        digit  = np.zeros(trialAll_num,dtype="int")
        letter = np.empty(trialAll_num,dtype="<U6")
        pair   = np.empty(trialAll_num,dtype="<U6")
        respCategory = np.empty(trialAll_num,dtype="<U9")

        # initialize vowel, consonant, even, odd // as example, vowel will show 1 if the letter is vowel and 0 otherwise. These vars will be useful to count how many consecutive times we expect a certain response (e.g., vowel)
        vowel      = np.zeros(trialAll_num,dtype="int")
        consonant  = np.zeros(trialAll_num,dtype="int")
        even       = np.zeros(trialAll_num,dtype="int")
        odd        = np.zeros(trialAll_num,dtype="int")

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1: # 1st trial
                    # pick any digit and letter
                    digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                    letter[trialIdx] = np.random.choice(letter_pool,1)[0]

                elif trial[trialIdx]==2: # 2nd trial
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the pair can be even the same as the previous one because the task (and the color) changes
                        # pick any digit and letter
                        digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                        letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                    else: # if current task is the same as the previous task (thus also same color)
                        # "criterion 1" make sure that digit AND/OR letter are different from previous trial (i.e., remove those stimuli from the pools and draw from the resuced pool)
                        reduceChoice = np.random.randint(1,4)  # Which pool (letter or digit or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only digit pool, 2=reduce only letter pool, 3=reduce both pools
                        if reduceChoice==1:
                            digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                            digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                            letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                        elif reduceChoice==2:
                            digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                            letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                            letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]
                        elif reduceChoice==3:
                            digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                            digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                            letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                            letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]

                elif trial[trialIdx]>=3: # 3rd trial and onwards
                    if task[trialIdx]!=task[trialIdx-1]: # if current task is different task from previous task: nothing to worry about. the pair can be even the same as the previous one because the task (and the color) changes
                        # pick any digit and letter
                        digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                        letter[trialIdx] = np.random.choice(letter_pool,1)[0]

                    else: # if current task is the same as the previous task (thus also same color)
                        if respCategory[trialIdx-1]!=respCategory[trialIdx-2]:  # if response Category was not the same in the previous two trials --> there is NO risk of having three times in a row the same response Category (e.g., vowel)
                            # "criterion 1" make sure that digit AND/OR letter are different from previous trial (i.e., remove those stimuli from the pools and draw from the resuced pool)
                            reduceChoice = np.random.randint(1,4)  # Which pool (letter or digit or both) should we reduce? To implement the "AND/OR", pick a random integer from 1 to 3. 1=reduce only digit pool, 2=reduce only letter pool, 3=reduce both pools
                            if reduceChoice==1:
                                digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                                digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                                letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                            elif reduceChoice==2:
                                digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                                letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                                letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]
                            elif reduceChoice==3:
                                digit_pool_red  = np.delete(digit_pool,   digit_pool.index(digit[trialIdx-1]) )  # reduced pool
                                digit[trialIdx] = np.random.choice(digit_pool_red,1)[0]
                                letter_pool_red = np.delete(letter_pool, letter_pool.index(letter[trialIdx-1]) )  # reduced pool
                                letter[trialIdx] = np.random.choice(letter_pool_red,1)[0]

                        else:    # if response Category was the same in the previous two trials --> there is risk of having three times in a row the same response Category (e.g., vowel), so we need to exclude the stimuli compatible with this response category (e.g., all vowels)
                            # "criteria 1 and 2"
                            if respCategory[trialIdx-1]=="vowel":
                                # pick any digit, but draw the letter from the consonant pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_consonant_pool,1)[0]
                            elif respCategory[trialIdx-1]=="consonant":
                                # pick any digit, but draw the letter from the vowel pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx]  = np.random.choice(digit_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_vowel_pool,1)[0]
                            elif respCategory[trialIdx-1]=="even":
                                # pick any letter, but draw the digit from the odd pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx] = np.random.choice(digit_odd_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_pool,1)[0]
                            elif respCategory[trialIdx-1]=="odd":
                                # pick any letter, but draw the digit from the even pool only. Criterion 1 is also automatically met because in this way the pair is already going to be different from the previous pair
                                digit[trialIdx] = np.random.choice(digit_even_pool,1)[0]
                                letter[trialIdx] = np.random.choice(letter_pool,1)[0]

                # create pair of letter + digit
                pair[trialIdx] = letter[trialIdx] + str(digit[trialIdx])

                # now that digit and letter have been chosen, update responseCategory.
                if np.isin(letter[trialIdx],letter_vowel_pool):  vowel[trialIdx] = 1
                else:                                            vowel[trialIdx] = 0
                if np.isin(letter[trialIdx],letter_consonant_pool): consonant[trialIdx] = 1
                else:                                               consonant[trialIdx] = 0
                if np.isin(digit[trialIdx],digit_even_pool):  even[trialIdx] = 1
                else:                                         even[trialIdx] = 0
                if np.isin(digit[trialIdx],digit_odd_pool): odd[trialIdx] = 1
                else:                                       odd[trialIdx] = 0
                if task[trialIdx]=="letter":
                    if vowel[trialIdx]==1:
                        respCategory[trialIdx] = "vowel"
                    elif consonant[trialIdx]==1:
                        respCategory[trialIdx] = "consonant"
                elif task[trialIdx]=="digit":
                    if even[trialIdx]==1:
                        respCategory[trialIdx] = "even"
                    elif odd[trialIdx]==1:
                        respCategory[trialIdx] = "odd"

            # criterion "3"
            # multiply task_letter (1=letter task, 0=otherwise) with vowel(1=vowel, 0=otherwise). Their product will identify letter trials with vowel (i.e., it will ignore digit trials where the letter is a vowel). Same concept for the other 3 cases
            task_letter_vowel     = task_letter * vowel
            task_letter_consonant = task_letter * consonant
            task_digit_even       = task_digit * even
            task_digit_odd        = task_digit * odd
            # proportion of expected response, to make sure they are the same (0.25)
            proportionCheck  = np.zeros(4,dtype="float") # initialize
            proportionCheck[0] = sum(task_letter_vowel) / trialAll_num
            proportionCheck[1] = sum(task_letter_consonant) / trialAll_num
            proportionCheck[2] = sum(task_digit_even) / trialAll_num
            proportionCheck[3] = sum(task_digit_odd) / trialAll_num

            # "criterion 4"
            # check that each digit (same for letter) is picked at least 5% of the times
            digitProportion  = np.empty(len(digit_pool),dtype=float)
            letterProportion = np.empty(len(letter_pool),dtype=float)
            for poolIdx in np.arange(0,len(digit_pool)):
                digitProportion[poolIdx]  = sum(digit==digit_pool[poolIdx])/trialAll_num
                letterProportion[poolIdx] = sum(letter==letter_pool[poolIdx])/trialAll_num

            # implements the two checks above (keep asking for a new sequence if either of the two checks fails)
            if sum(proportionCheck==0.25)==4 and np.min(digitProportion)>=0.05 and np.min(letterProportion)>=0.05:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # %% create expectedResponse
        # "f" = consonant & odd
        # "j" = vowel & even

        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[np.logical_or(respCategory=="even",respCategory=="vowel")]     = "j"
        expectedResponse[np.logical_or(respCategory=="odd", respCategory=="consonant")] = "f"

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'digit': digit,
                                       'even': even,
                                       'odd': odd,
                                       'letter': letter,
                                       'vowel': vowel,
                                       'consonant': consonant,
                                       'pair': pair,
                                       'switch': switch,
                                       'condition': condition,
                                       'task': task,
                                       'task_digit': task_digit,
                                       'task_letter': task_letter,
                                       'task_letter_vowel': task_letter_vowel,
                                       'task_letter_consonant': task_letter_consonant,
                                       'task_digit_even': task_digit_even,
                                       'task_digit_odd': task_digit_odd,
                                       'color': color,
                                       'colorHex': colorHex,
                                       'respCategory': respCategory,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine end
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    ImageComponent endImage
      image = endSlide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine instructions2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startPractice
    Routine practiceSequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instructions
  Routine instructions2
  Routine startTask
  Routine taskSequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
  LoopTerminator experimentalBlock
  Routine end
