PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = adaptiveNback
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.loc[practiceBlock.thisN, 'trial'])
        thisExp.addData('myPract.letter', sequenceDataset.loc[practiceBlock.thisN, 'letter'])
        thisExp.addData('myPract.nback_match', sequenceDataset.loc[practiceBlock.thisN, 'nbackMatch'])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if nbackResp.keys:
            sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] = nbackResp.keys
        thisExp.addData('myPract.observedResponse', sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'])

        if sequenceDataset.loc[practiceBlock.thisN, 'trial'] >= 3:

            # Accuracy
            sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[practiceBlock.thisN, 'observedResponse'] == sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse'])
            thisExp.addData('myPract.Accuracy', sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'])

            # RT all trials
            sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'] = nbackResp.rt
            thisExp.addData('myPract.RT_allTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_allTrials'])

            # RT correct trials
            if sequenceDataset.loc[practiceBlock.thisN, 'Accuracy'] == 1:
                sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'] = nbackResp.rt
                thisExp.addData('myPract.RT_correctTrials', sequenceDataset.loc[practiceBlock.thisN, 'RT_correctTrials'])
    TextComponent nbackStim
      color = black
      letterHeight = 5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(sequenceDataset.loc[practiceBlock.thisN, 'letter'])
      units = deg
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    KeyboardComponent nbackResp
      allowedKeys = 'r','i'
      correctAns = $sequenceDataset.loc[practiceBlock.thisN, 'expectedResponse']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practiceTrial_feedback
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    CodeComponent fbCode
      Code Type = Py
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      Begin Routine:
        # text, color and sound of feedback
        if nbackResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        #if practiceBlock.thisN>=2:
        fb_duration = 0.5
        #else:
        #    fb_duration = 0.0
    TextComponent fbText
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent fbSound
      forceEndRoutine = False
      hamming = False
      saveStartStop = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fbCode_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)
        Practice_allTrials_num = Practice_allTrials_num -2 # removing the first two trials from the count as they are not meaningful in a 2-back task

        # number of trials with correct answer, among the trialRange specified below to discard the first 2 trials
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fbText_2
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent fbInstText
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70%
        you will repeat the practice block

        Press bar to continue
    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Py
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      Begin Routine:
        # adaptive duration
        if sequenceDataset.loc[experimentalBlock.thisN, 'trial'] <= 3:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = 0.5 + Practice_correctTrials_3qrtRT  # for first 3 trials, use 3rd qrt RT from practice block + 500 ms
        else:
            sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'] = sequenceDataset.loc[experimentalBlock.thisN-1, 'trialDuration'] + sequenceDataset.loc[experimentalBlock.thisN-1, 'step']  # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial', sequenceDataset.loc[experimentalBlock.thisN, 'trial'])
        thisExp.addData('myExp.letter', sequenceDataset.loc[experimentalBlock.thisN, 'letter'])
        thisExp.addData('myExp.nback_match', sequenceDataset.loc[experimentalBlock.thisN, 'nbackMatch'])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
      End Routine:
        # observed response
        if nbackResp_2.keys:
            sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] = nbackResp_2.keys
        thisExp.addData('myExp.observedResponse', sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'])

        # trialDuration
        thisExp.addData('myExp.trialDuration', sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration'])

        if sequenceDataset.loc[experimentalBlock.thisN, 'trial'] >= 3:

            # Accuracy
            if pd.isna(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse']):
                sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(0)
            else:
                sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] = int(sequenceDataset.loc[experimentalBlock.thisN, 'observedResponse'] == sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse'])
            thisExp.addData('myExp.Accuracy', sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'])

            # RT all trials
            if nbackResp_2.keys:
                sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'] = nbackResp_2.rt
                thisExp.addData('myExp.RT_allTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_allTrials'])

            # RT correct trials
            if sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] == 1:
                sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'] = nbackResp_2.rt
                thisExp.addData('myExp.RT_correctTrials', sequenceDataset.loc[experimentalBlock.thisN, 'RT_correctTrials'])

            # adaptation
            if sequenceDataset.loc[experimentalBlock.thisN, 'nbackMatch'] == 1:  # for "match" trials
                if sequenceDataset.loc[experimentalBlock.thisN, 'Accuracy'] == 1:
                    sequenceDataset.loc[experimentalBlock.thisN, 'step'] = -0.05  # if correct response, decrease duration
                else:
                    sequenceDataset.loc[experimentalBlock.thisN, 'step'] = +0.05  # otherwise (incorrect or no response), increase duration
            else:  # for "non-match" trials
                sequenceDataset.loc[experimentalBlock.thisN, 'step'] = 0.0  # no step change

            thisExp.addData('myExp.step', sequenceDataset.loc[experimentalBlock.thisN, 'step'])
    TextComponent nbackStim_2
      color = black
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      text [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'letter']
      units = deg
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    KeyboardComponent nbackResp_2
      allowedKeys = 'r','i'
      correctAns = $sequenceDataset.loc[experimentalBlock.thisN, 'expectedResponse']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.loc[experimentalBlock.thisN, 'trial']/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.loc[experimentalBlock.thisN, 'trialDuration']
      units = height
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    CodeComponent expAfterKeyPress
      Code Type = Auto->JS
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      Begin Routine:
        nbackStim_2.text = sequenceDataset.loc[experimentalBlock.thisN, 'letter']
      Each Frame:
        # force stimuli to disappear after keypress
        if nbackResp_2.keys:
            nbackStim_2.text = ''
    CodeComponent expTone
      Code Type = Auto->JS
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      Before Experiment:
        # sound parameters
        errorBeep = sound.Sound(600, secs = 0.050, stereo=True, hamming=False, volume = 1)
      Begin Routine:
        # for each trial reset error beep parameters
        toggleBeep = False
        tonePlayed = False
      Each Frame:
        # determine if to play the error beep (within trial duration)
        if len(nbackResp_2.keys)>0 and nbackResp_2.corr!=1:
            toggleBeep = True # incorrect response key within the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
      End Routine:
        # determine if to play the error beep (at end of trial duration)
        if nbackResp_2.keys==None and nbackResp_2.corr!=1:
            toggleBeep = True # no response (where one, correct, was expected) by the end of the trial duration

        # play the error beep
        if toggleBeep==True and tonePlayed==False and errorBeep.status!=STARTED:
            errorBeep.play()
            tonePlayed = True
  Routine blank
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # decide duration of blank element
        if nbackResp_2.keys:  # if a response was given, wait for the remainder before next trial
            blankDuration = sequenceDataset.trialDuration[experimentalBlock.thisN] - nbackResp_2.rt
        else:                 # if no response was given, it means that the time was already over for that trial
            blankDuration = 0


        # sound of feedback
        if nbackResp_2.corr:
            sound_volume = 0
        else:
            sound_volume = 1
    StaticComponent blankPeriod
      saveData = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
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    ProgressComponent progressBar_2
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
      units = height
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    SoundComponent fbSound_2
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceSequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF N-BACK STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 20 # number of trials (must be even)
        trialMatch_proportion = 1/2 # proportion of match trials
        trialMatch_num_expected = (trialAll_num-2) * trialMatch_proportion  # num of match trials

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %%  create nbackMatch column (i.e., a list of True and False)
        # criteria:
        # 1. the first two trials are False
        # 2. no more than two consecutive True (there can be more than two consecutive Flase, to avoid making the sequence a bit predictable)
        # 3. same number of True and False

        nbackMatch = np.empty(trialAll_num,dtype=int)   # initialize

        toggleSwitch = 1
        while toggleSwitch==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:     # False for the first two trials
                    nbackMatch[trialIdx] = 0
                else:  # for the next trials random choice, unless the previous two trials were True (if so pick False)
                    if nbackMatch[trialIdx-2]==1  and  nbackMatch[trialIdx-1]==1 :
                        nbackMatch[trialIdx] = 0
                    else :
                        nbackMatch[trialIdx] = np.int64(np.random.randn(1)>0)

            # evaluate if number of True is half of trial number
            numTrue = sum(nbackMatch)
            if numTrue==trialMatch_num_expected:
                toggleSwitch = 0

        # %% create letter column (i.e., a list of letters)
        # criteria:
        # 1. use a specific pool of letters
        # 2. never the same letter on consecutive trials

        """
        b.1 Assign Stimuli Pool
        """

        letter = np.empty(trialAll_num,dtype="<U6")
        letterPool = ["A","E","I","U","H","K","M","R"]

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1:    # 1st trial, pick any letter from the pool
                    letter[trialIdx] = np.random.choice(letterPool,1)[0]  # pick one letter from the pool. all letters have equal probability of being picked
                elif trial[trialIdx]==2:   # 2nd trial, remove from the pool the letter used in the previous trial and pick from the remaining letters
                    previousletter = letterPool.index(letter[trialIdx-1])    # letter at previous 1 trial
                    letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                    letter[trialIdx] = np.random.choice(letterPool_red,1)[0]   # pick one letter from the modified pool. all letters have equal probability of being picked
                else:                    # 3rd trial onwards
                    if nbackMatch[trialIdx]==True:            # if match
                        letter[trialIdx] = letter[trialIdx-2] # pick the same letter presented two trials before
                    else:                # if non-match, remove from the pool the letters used in the previous two trials and pick from the remaining letters
                        previousletter = (letterPool.index(letter[trialIdx-1]),letterPool.index(letter[trialIdx-2]))    # letters of previous 2 trials
                        letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                        letter[trialIdx] = np.random.choice(letterPool_red,1)[0]    # pick one letter from the modified pool. all letters have equal probability of being picked

            # check that vowels are 50% of the trials
            isvowel = np.zeros(trialAll_num,dtype=int)
            for trialIdx in np.arange(0,trialAll_num):
                isvowel[trialIdx] = letter[trialIdx] in ["A","E","I","U"]

            # check that each letter is picked at least 5% of the times
            letterProportion = np.empty(len(letterPool),dtype=float)
            for poolIdx in np.arange(0,len(letterPool)):
                letterProportion[poolIdx] = sum(letter==letterPool[poolIdx])/trialAll_num

            # implement the two checks above
            if sum(isvowel)==trialAll_num/2   and   np.min(letterProportion)>=0.05:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # create expectedResponse
        # True=match, False=non-match
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[nbackMatch==1] = "i"
        expectedResponse[nbackMatch==0] = "r"

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'letter': letter,
                                       'isvowel': isvowel,
                                       'nbackMatch': nbackMatch,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine taskSequenceGeneration
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode_2
      Code Type = Py
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      End Routine:
        """
        GENERATE LISTS OF N-BACK STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trialAll_num = 216 # number of trials (must be even)
        trialMatch_proportion = 1/2 # proportion of match trials
        trialMatch_num_expected = (trialAll_num-2) * trialMatch_proportion  # num of match trials

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %%  create nbackMatch column (i.e., a list of True and False)
        # criteria:
        # 1. the first two trials are False
        # 2. no more than two consecutive True (there can be more than two consecutive Flase, to avoid making the sequence a bit predictable)
        # 3. same number of True and False

        nbackMatch = np.empty(trialAll_num,dtype=int)   # initialize

        toggleSwitch = 1
        while toggleSwitch==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:     # False for the first two trials
                    nbackMatch[trialIdx] = 0
                else:  # for the next trials random choice, unless the previous two trials were True (if so pick False)
                    if nbackMatch[trialIdx-2]==1  and  nbackMatch[trialIdx-1]==1 :
                        nbackMatch[trialIdx] = 0
                    else :
                        nbackMatch[trialIdx] = np.int64(np.random.randn(1)>0)

            # evaluate if number of True is half of trial number
            numTrue = sum(nbackMatch)
            if numTrue==trialMatch_num_expected:
                toggleSwitch = 0

        # %% create letter column (i.e., a list of letters)
        # criteria:
        # 1. use a specific pool of letters
        # 2. never the same letter on consecutive trials

        """
        b.1 Assign Stimuli Pool
        """

        letter = np.empty(trialAll_num,dtype="<U6")
        letterPool = ["A","E","I","U","H","K","M","R"]

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1:    # 1st trial, pick any letter from the pool
                    letter[trialIdx] = np.random.choice(letterPool,1)[0]  # pick one letter from the pool. all letters have equal probability of being picked
                elif trial[trialIdx]==2:   # 2nd trial, remove from the pool the letter used in the previous trial and pick from the remaining letters
                    previousletter = letterPool.index(letter[trialIdx-1])    # letter at previous 1 trial
                    letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                    letter[trialIdx] = np.random.choice(letterPool_red,1)[0]   # pick one letter from the modified pool. all letters have equal probability of being picked
                else:                    # 3rd trial onwards
                    if nbackMatch[trialIdx]==True:            # if match
                        letter[trialIdx] = letter[trialIdx-2] # pick the same letter presented two trials before
                    else:                # if non-match, remove from the pool the letters used in the previous two trials and pick from the remaining letters
                        previousletter = (letterPool.index(letter[trialIdx-1]),letterPool.index(letter[trialIdx-2]))    # letters of previous 2 trials
                        letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                        letter[trialIdx] = np.random.choice(letterPool_red,1)[0]    # pick one letter from the modified pool. all letters have equal probability of being picked

            # check that vowels are 50% of the trials
            isvowel = np.zeros(trialAll_num,dtype=int)
            for trialIdx in np.arange(0,trialAll_num):
                isvowel[trialIdx] = letter[trialIdx] in ["A","E","I","U"]

            # check that each letter is picked at least 5% of the times
            letterProportion = np.empty(len(letterPool),dtype=float)
            for poolIdx in np.arange(0,len(letterPool)):
                letterProportion[poolIdx] = sum(letter==letterPool[poolIdx])/trialAll_num

            # implement the two checks above
            if sum(isvowel)==trialAll_num/2   and   np.min(letterProportion)>=0.05:
                toggleSwitch2 = 0

        """
        ========================
        c. Assign Response Keys
        ========================
        """

        # create expectedResponse
        # True=match, False=non-match
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[nbackMatch==1] = "i"
        expectedResponse[nbackMatch==0] = "r"

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'letter': letter,
                                       'isvowel': isvowel,
                                       'nbackMatch': nbackMatch,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine instructions
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    ImageComponent instImage
      image = instNback_1.JPG
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instructions2
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    ImageComponent instImage_2
      image = instNback_2.JPG
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine end
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    ImageComponent endImage
      image = endSlide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startPractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startTask
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    TextComponent startTask_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine instructions2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startPractice
    Routine practiceSequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instructions
  Routine instructions2
  Routine startTask
  Routine taskSequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
  LoopTerminator experimentalBlock
  Routine end
