PsychoPy2experiment version="2023.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'task no.': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = NonEF0-back
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine sequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuli
      Code Type = Py
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      End Routine:
        """
        This script generates sequences of N-BACK stimuli
        """

        import numpy as np
        import pandas as pd

        # Non-Executive version:
        # same as the executive version
        # but expected response depends on the letter being vowel or consonant

        trialAll_num = 20#216 # number of trials (must be even)
        trialMatch_proportion = 1/2 # proportion of match trials
        trialMatch_num_expected = (trialAll_num-2) * trialMatch_proportion  # num of match trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %%  create nbackMatch column (i.e., a list of True and False)
        # criteria:
        # 1. the first two trials are False
        # 2. no more than two consecutive True (there can be more than two consecutive Flase, to avoid making the sequence a bit predictable)
        # 3. same number of True and False
        nbackMatch = np.empty(trialAll_num,dtype=int)   # initialize

        toggleSwitch = 1
        while toggleSwitch==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:     # False for the first two trials
                    nbackMatch[trialIdx] = 0
                else:  # for the next trials random choice, unless the previous two trials were True (if so pick False)
                    if nbackMatch[trialIdx-2]==1  and  nbackMatch[trialIdx-1]==1 :
                        nbackMatch[trialIdx] = 0
                    else :
                        nbackMatch[trialIdx] = np.int64(np.random.randn(1)>0)

            # evaluate if number of True is half of trial number
            numTrue = sum(nbackMatch)
            if numTrue==trialMatch_num_expected:
                toggleSwitch = 0

        # %% create letter column (i.e., a list of letters)
        # criteria:
        # 1. use a specific pool of letters
        # 2. never the same letter on consecutive trials

        letter = np.empty(trialAll_num,dtype="<U6")
        letterPool = ["A","E","I","U","H","K","M","R"]

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1:    # for trial 1, pick any letter from the pool
                    letter[trialIdx] = np.random.choice(letterPool,1)[0]  # pick one letter from the pool. all letters have equal probability of being picked
                elif trial[trialIdx]==2:   # for trial 2, remove from the pool the letter used in the previous trial and pick from the remaining letters
                    previousletter = letterPool.index(letter[trialIdx-1])    # letter at previous 1 trial
                    letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                    letter[trialIdx] = np.random.choice(letterPool_red,1)[0]   # pick one letter from the modified pool. all letters have equal probability of being picked
                else:                    # for trial 3 and beyond...
                    if nbackMatch[trialIdx]==True:            # if match
                        letter[trialIdx] = letter[trialIdx-2] # pick the same letter presented two trials before
                    else:                # if non-match, remove from the pool the letters used in the previous two trials and pick from the remaining letters
                        previousletter = (letterPool.index(letter[trialIdx-1]),letterPool.index(letter[trialIdx-2]))    # letters of previous 2 trials
                        letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                        letter[trialIdx] = np.random.choice(letterPool_red,1)[0]    # pick one letter from the modified pool. all letters have equal probability of being picked

            # check that vowels are 50% of the trials
            isvowel = np.zeros(trialAll_num,dtype=int)
            for trialIdx in np.arange(0,trialAll_num):
                isvowel[trialIdx] = letter[trialIdx] in ["A","E","I","U"]

            # check that each letter is picked at least 5% of the times
            letterProportion = np.empty(len(letterPool),dtype=float)
            for poolIdx in np.arange(0,len(letterPool)):
                letterProportion[poolIdx] = sum(letter==letterPool[poolIdx])/trialAll_num

            # implement the two checks above
            if sum(isvowel)==trialAll_num/2   and   np.min(letterProportion)>=0.05:
                toggleSwitch2 = 0
        # %% create expectedResponse
        # Vowel or Consonant
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[isvowel==1] = "j"
        expectedResponse[isvowel==0] = "f"

        # %% create dataset
        # build a dataframe from dictionary

        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'letter': letter,
                                       'isvowel': isvowel,
                                       'nbackMatch': nbackMatch,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.trial[practiceBlock.thisN])
        thisExp.addData('myPract.letter', sequenceDataset.letter[practiceBlock.thisN])
        thisExp.addData('myPract.nback_match', sequenceDataset.nbackMatch[practiceBlock.thisN])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.expectedResponse[practiceBlock.thisN])
      End Routine:
        # observed response
        if nbackResp.keys:
            sequenceDataset.observedResponse[practiceBlock.thisN] = nbackResp.keys
        thisExp.addData('myPract.observedResponse',   sequenceDataset.observedResponse[practiceBlock.thisN])


        if sequenceDataset.trial[practiceBlock.thisN]>=3:

            # Accuracy
            sequenceDataset.Accuracy[practiceBlock.thisN]             = int(sequenceDataset.observedResponse[practiceBlock.thisN] == sequenceDataset.expectedResponse[practiceBlock.thisN])
            thisExp.addData('myPract.Accuracy',         sequenceDataset.Accuracy[practiceBlock.thisN])

            # RT all trials
            sequenceDataset.RT_allTrials[practiceBlock.thisN]         = nbackResp.rt
            thisExp.addData('myPract.RT_allTrials',     sequenceDataset.RT_allTrials[practiceBlock.thisN])

            # RT correct trials
            if sequenceDataset.Accuracy[practiceBlock.thisN] == 1:
                sequenceDataset.RT_correctTrials[practiceBlock.thisN] = nbackResp.rt
                thisExp.addData('myPract.RT_correctTrials',     sequenceDataset.RT_correctTrials[practiceBlock.thisN])
    TextComponent nbackStim
      color = black
      letterHeight = 5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(sequenceDataset.letter[practiceBlock.thisN])
      units = deg
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    KeyboardComponent nbackResp
      allowedKeys = 'j','f'
      correctAns = $sequenceDataset.expectedResponse[practiceBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine practiceTrial_feedback
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    CodeComponent fb_code
      Code Type = Py
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      Begin Routine:
        # text, color and sound of feedback
        if nbackResp.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            fb_text = 'Incorrect'
            fb_col = 'red'
            sound_volume = 1

        # duration of feedback
        #if practiceBlock.thisN>=2:
        fb_duration = 0.5
        #else:
        #    fb_duration = 0.0
    TextComponent fb
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent sound_1
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fb_code_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)
        Practice_allTrials_num = Practice_allTrials_num -2 # removing the first two trials from the count as they are not meaningful in a 2-back task

        # number of trials with correct answer, among the trialRange specified below to discard the first 2 trials
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fb_2
      color [set every repeat] = $fb_col
      letterHeight = 1.5
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_2
      Code Type = Py
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      Begin Routine:
        # adaptive duration
        if sequenceDataset.trial[experimentalBlock.thisN]<=3:
            #sequenceDataset.trialDuration[experimentalBlock.thisN] = 0.5 + Practice_correctTrials_MdnRT   # for first 3 trials, use Median RT from practice block + 500 ms
            sequenceDataset.trialDuration[experimentalBlock.thisN] = 0.5 + Practice_correctTrials_3qrtRT  # for first 3 trials, use 3rd qrt RT from practice block + 500 ms

        else:
            sequenceDataset.trialDuration[experimentalBlock.thisN] = sequenceDataset.trialDuration[experimentalBlock.thisN-1] + sequenceDataset.step[experimentalBlock.thisN-1]   # for all other trials add a value depending on previous trial accuracy


        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.letter',           sequenceDataset.letter[experimentalBlock.thisN])
        thisExp.addData('myExp.nback_match',      sequenceDataset.nbackMatch[experimentalBlock.thisN])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.expectedResponse[experimentalBlock.thisN])
      End Routine:
        # observed response
        if nbackResp_2.keys:
            sequenceDataset.observedResponse[experimentalBlock.thisN] = nbackResp_2.keys
        thisExp.addData('myExp.observedResponse',   sequenceDataset.observedResponse[experimentalBlock.thisN])

        # trialDuration
        thisExp.addData('myExp.trialDuration',      sequenceDataset.trialDuration[experimentalBlock.thisN])


        if sequenceDataset.trial[experimentalBlock.thisN]>=3:

            # Accuracy
            if sequenceDataset.observedResponse[experimentalBlock.thisN]==np.nan:
                sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(0)
            else:
                sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == sequenceDataset.expectedResponse[experimentalBlock.thisN])
            thisExp.addData('myExp.Accuracy',         sequenceDataset.Accuracy[experimentalBlock.thisN])

            # RT all trials
            if nbackResp_2.keys:
                sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = nbackResp_2.rt
                thisExp.addData('myExp.RT_allTrials',     sequenceDataset.RT_allTrials[experimentalBlock.thisN])

            # RT correct trials
            if sequenceDataset.Accuracy[experimentalBlock.thisN] == 1:
                sequenceDataset.RT_correctTrials[experimentalBlock.thisN] = nbackResp_2.rt
                thisExp.addData('myExp.RT_correctTrials',     sequenceDataset.RT_correctTrials[experimentalBlock.thisN])

            # adaptation
            sequenceDataset.step[experimentalBlock.thisN]    = 0.0  # no step change
            thisExp.addData('myExp.step',         sequenceDataset.step[experimentalBlock.thisN])
    TextComponent nbackStim_2
      color = black
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      text [set every repeat] = $sequenceDataset.letter[experimentalBlock.thisN]
      units = deg
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    KeyboardComponent nbackResp_2
      allowedKeys = 'j','f','None'
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      store = first key
      storeCorrect = True
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    ProgressComponent progressBar_pract1
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.trialDuration[experimentalBlock.thisN]
      units = height
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  Routine sequenceGeneration_2
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuli_2
      Code Type = Py
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      End Routine:
        """
        This script generates sequences of N-BACK stimuli
        """

        import numpy as np
        import pandas as pd

        # Non-Executive version:
        # same as the executive version
        # but expected response depends on the letter being vowel or consonant

        trialAll_num = 216 # number of trials (must be even)
        trialMatch_proportion = 1/2 # proportion of match trials
        trialMatch_num_expected = (trialAll_num-2) * trialMatch_proportion  # num of match trials

        # create trial column
        trial = 1+np.arange(0,trialAll_num)

        # %%  create nbackMatch column (i.e., a list of True and False)
        # criteria:
        # 1. the first two trials are False
        # 2. no more than two consecutive True (there can be more than two consecutive Flase, to avoid making the sequence a bit predictable)
        # 3. same number of True and False
        nbackMatch = np.empty(trialAll_num,dtype=int)   # initialize

        toggleSwitch = 1
        while toggleSwitch==1:
            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]<=2:     # False for the first two trials
                    nbackMatch[trialIdx] = 0
                else:  # for the next trials random choice, unless the previous two trials were True (if so pick False)
                    if nbackMatch[trialIdx-2]==1  and  nbackMatch[trialIdx-1]==1 :
                        nbackMatch[trialIdx] = 0
                    else :
                        nbackMatch[trialIdx] = np.int64(np.random.randn(1)>0)

            # evaluate if number of True is half of trial number
            numTrue = sum(nbackMatch)
            if numTrue==trialMatch_num_expected:
                toggleSwitch = 0

        # %% create letter column (i.e., a list of letters)
        # criteria:
        # 1. use a specific pool of letters
        # 2. never the same letter on consecutive trials

        letter = np.empty(trialAll_num,dtype="<U6")
        letterPool = ["A","E","I","U","H","K","M","R"]

        toggleSwitch2 = 1
        while toggleSwitch2==1:

            for trialIdx in np.arange(0,trialAll_num):
                if trial[trialIdx]==1:    # for trial 1, pick any letter from the pool
                    letter[trialIdx] = np.random.choice(letterPool,1)[0]  # pick one letter from the pool. all letters have equal probability of being picked
                elif trial[trialIdx]==2:   # for trial 2, remove from the pool the letter used in the previous trial and pick from the remaining letters
                    previousletter = letterPool.index(letter[trialIdx-1])    # letter at previous 1 trial
                    letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                    letter[trialIdx] = np.random.choice(letterPool_red,1)[0]   # pick one letter from the modified pool. all letters have equal probability of being picked
                else:                    # for trial 3 and beyond...
                    if nbackMatch[trialIdx]==True:            # if match
                        letter[trialIdx] = letter[trialIdx-2] # pick the same letter presented two trials before
                    else:                # if non-match, remove from the pool the letters used in the previous two trials and pick from the remaining letters
                        previousletter = (letterPool.index(letter[trialIdx-1]),letterPool.index(letter[trialIdx-2]))    # letters of previous 2 trials
                        letterPool_red = np.delete(letterPool, previousletter )  # modified letterPool to remove the letter of the previous trial(s)
                        letter[trialIdx] = np.random.choice(letterPool_red,1)[0]    # pick one letter from the modified pool. all letters have equal probability of being picked

            # check that vowels are 50% of the trials
            isvowel = np.zeros(trialAll_num,dtype=int)
            for trialIdx in np.arange(0,trialAll_num):
                isvowel[trialIdx] = letter[trialIdx] in ["A","E","I","U"]

            # check that each letter is picked at least 5% of the times
            letterProportion = np.empty(len(letterPool),dtype=float)
            for poolIdx in np.arange(0,len(letterPool)):
                letterProportion[poolIdx] = sum(letter==letterPool[poolIdx])/trialAll_num

            # implement the two checks above
            if sum(isvowel)==trialAll_num/2   and   np.min(letterProportion)>=0.05:
                toggleSwitch2 = 0
        # %% create expectedResponse
        # Vowel or Consonant
        expectedResponse = np.array(['key2press' for _ in np.arange(trialAll_num)])
        expectedResponse[isvowel==1] = "j"
        expectedResponse[isvowel==0] = "f"

        # %% create dataset
        # build a dataframe from dictionary

        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'letter': letter,
                                       'isvowel': isvowel,
                                       'nbackMatch': nbackMatch,
                                       'expectedResponse': expectedResponse,
                                       'observedResponse': np.nan,
                                       'Accuracy': np.nan,
                                       'RT_allTrials': np.nan,
                                       'RT_correctTrials': np.nan,
                                       'trialDuration': np.nan,
                                       'step': np.nan})
  Routine pretest
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    FormComponent pre_test
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Pre.csv
      Randomize = False
      Style = dark
      Text Height = 0.025
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent pre_head
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please complete the questionnaires
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    TextComponent instText_4
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [condition] = pre_test.complete
      text = Press bar to continue
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    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = pre_test.complete
      store = nothing
      syncScreenRefresh = False
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  Routine posttest1
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    FormComponent post_test
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.04
      Items = Post1.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent post_head
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please complete the questionnaires 
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    TextComponent instText_5
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [condition] = post_test.complete
      text = Press bar to continue
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    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = post_test.complete
      store = nothing
      syncScreenRefresh = False
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  Routine posttest2
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    FormComponent post_test2
      Data Format = columns
      Font = Open Sans
      Item Padding = 0.05
      Items = Post2.csv
      Randomize = False
      Style = dark
      Text Height = 0.02
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent post_head_2
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Please complete the questionnaires 
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    TextComponent instText_6
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [condition] = post_test2.complete
      text = Press bar to submit
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = post_test2.complete
      store = nothing
      syncScreenRefresh = False
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  Routine startpractice
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine starttask
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # decide duration of blank element
        if nbackResp_2.keys:  # if a response was given, wait for the remainder before next trial
            blankDuration = sequenceDataset.trialDuration[experimentalBlock.thisN] - nbackResp_2.rt
        else:                 # if no response was given, it means that the time was already over for that trial
            blankDuration = 0


        # sound of feedback
        if nbackResp_2.corr:
            sound_volume = 0
        else:
            sound_volume = 1
    StaticComponent blankPeriod
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
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    ProgressComponent progressBar_pract2
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.trial[experimentalBlock.thisN]/trialAll_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
      units = height
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    SoundComponent sound_2
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine Instruction
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    ImageComponent instImage
      image = Slide8.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Instruction2
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    ImageComponent instImage2
      image = Slide9.JPG
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instText_3
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine End
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    ImageComponent image
      image = end slide.jpg
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  Routine Instruction2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startpractice
    Routine sequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine Instruction
  Routine Instruction2
  Routine starttask
  Routine sequenceGeneration_2
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalTrial
    Routine blank
  LoopTerminator experimentalBlock
  Routine End
