PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = adaptiveSpatialFiguralUpdating
  keyboardBackend = ioHub
  logging level = debug
  runMode = 1
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Routines
  Routine practiceTrial
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    CodeComponent addData
      Code Type = Py
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      Begin Routine:
        rowCounter = rowCounter + 1

        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.loc[rowCounter, 'trial'])
        thisExp.addData('myPract.grid', sequenceDataset.loc[rowCounter, 'grid'])
        thisExp.addData('myPract.stimulus', sequenceDataset.loc[rowCounter, 'stimulus'])

        thisExp.addData('myPract.color', sequenceDataset.loc[rowCounter, 'color'])
        thisExp.addData('myPract.position', sequenceDataset.loc[rowCounter, 'position'])
        thisExp.addData('myPract.gridName', sequenceDataset.loc[rowCounter, 'gridName'])
      End Routine:
        # RespTime_grid
        sequenceDataset.loc[rowCounter, 'RespTime_grid'] = spatialupdatingResp.rt
        thisExp.addData('myPract.RespTime_grid', sequenceDataset.loc[rowCounter, 'RespTime_grid'])
    ImageComponent spatialupdatingStim
      image [set every repeat] = $'spatialupdating_stimuli/'+sequenceDataset.loc[rowCounter, 'gridName']+'.JPG'
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent spatialupdatingResp
      allowedKeys = 'space'
      correctAns = $sequenceDataset.expectedResponse[practiceBlock.thisN]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine practiceTrial_feedback
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    CodeComponent fbCode
      Code Type = Py
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      Begin Routine:
        # text, color, and volume of feedback
        if np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "blu":
            if sequenceDataset.loc[rowCounter, 'Accuracy_blu']:
                fb_text = 'Correct!'
                fb_col = 'green'
                sound_volume = 0
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
                sound_volume = 1

        if np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "gre":
            if sequenceDataset.loc[rowCounter, 'Accuracy_gre']:
                fb_text = 'Correct!'
                fb_col = 'green'
                sound_volume = 0
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
                sound_volume = 1

        if np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "red":
            if sequenceDataset.loc[rowCounter, 'Accuracy_red']:
                fb_text = 'Correct!'
                fb_col = 'green'
                sound_volume = 0
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
                sound_volume = 1

        if np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "yel":
            if sequenceDataset.loc[rowCounter, 'Accuracy_yel']:
                fb_text = 'Correct!'
                fb_col = 'green'
                sound_volume = 0
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
                sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent fbText
      color [set every repeat] = $fb_col
      durationEstim = 1
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent fbSound
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent fbCode_2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = np.array(sequenceDataset.trial)[-1] # the last cell in the sequenceDataset.trial colums

        # number of responses (n responses per trial)
        Practice_responses_num = numCol*Practice_allTrials_num

        # number of correct responses
        Practice_correctResponses_num = np.nansum(sequenceDataset.Accuracy_tot)

        # percentage of correct responses
        Practice_correctResponses_pct= 100*Practice_correctResponses_num/Practice_responses_num

        # Mdn response time to all grids
        Practice_grid_MdnRT = np.nanmedian(sequenceDataset.RespTime_grid)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        Practice_grid_3qrtRT = np.nanpercentile(sequenceDataset.RespTime_grid, 75)


        # message for feedback
        msg = "%i of %i correct responses \n%.2f%% correct \nMdn RespTime = %.2fs " %(Practice_correctResponses_num, Practice_responses_num, Practice_correctResponses_pct, Practice_grid_MdnRT )


        # color of feedback
        if Practice_correctResponses_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctResponses_pct >= 70:
            practiceRepetition.finished = True
    TextComponent fbText_2
      color [set every repeat] = $fb_col
      letterHeight = 1.45
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $msg
    TextComponent fbInstText
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70%
        you will repeat the practice block

        Press bar to continue
    KeyboardComponent moveOn_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practiceInstructions
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    ImageComponent instImage
      image = instSFU_1.jpg
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalTrial
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    CodeComponent addData_4
      Code Type = Py
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      Begin Routine:
        rowCounter = rowCounter + 1


        # adaptive duration
        if sequenceDataset.loc[rowCounter, 'trial'] == 1:
            sequenceDataset.loc[rowCounter, 'gridDuration'] = Practice_grid_3qrtRT  # for first set, use 3rd qrt ResponseTimes from practice block grids
        else:
            if sequenceDataset.loc[rowCounter, 'grid'] == 1:
                sequenceDataset.loc[rowCounter, 'gridDuration'] = sequenceDataset.loc[rowCounter-1, 'gridDuration'] + sequenceDataset.loc[rowCounter-1, 'step']
                # for the first memorization trial of the next sets, add a step value depending on previous set accuracy
            else:
                sequenceDataset.loc[rowCounter, 'gridDuration'] = sequenceDataset.loc[rowCounter-1, 'gridDuration']
                # for the second memorization trial onwards, maintain the same duration as the first trial of this set


        # add data about the sequence
        thisExp.addData('myExp.trial', sequenceDataset.loc[rowCounter, 'trial'])
        thisExp.addData('myExp.grid', sequenceDataset.loc[rowCounter, 'grid'])
        thisExp.addData('myExp.stimulus', sequenceDataset.loc[rowCounter, 'stimulus'])

        thisExp.addData('myExp.color', sequenceDataset.loc[rowCounter, 'color'])
        thisExp.addData('myExp.position', sequenceDataset.loc[rowCounter, 'position'])
        thisExp.addData('myExp.gridName', sequenceDataset.loc[rowCounter, 'gridName'])

        thisExp.addData('myExp.gridDuration', sequenceDataset.loc[rowCounter, 'gridDuration'])
    ImageComponent spatialupdatingStim_2
      image [set every repeat] = $'spatialupdating_stimuli/'+sequenceDataset.loc[rowCounter, 'gridName']+'.JPG'
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.loc[rowCounter, 'gridDuration']
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    ProgressComponent progressBar
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.loc[rowCounter, 'trial']/trial_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $sequenceDataset.loc[rowCounter, 'gridDuration']
      units = height
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  Routine practiceInstructions2
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    ImageComponent instImage_2
      image = instSFU_2.jpg
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText_2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine blank
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        # decide duration of blank element

        if globallocalResp_2.keys:  # if a response was given, wait for the remainder before next trial
            blankDuration = sequenceDataset.trialDuration[experimentalBlock.thisN] - globallocalResp_2.rt
        else:                 # if no response was given, it means that the time was already over for that trial
            blankDuration = 0
    StaticComponent blankPeriod
      saveData = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blankDuration
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  Routine practiceResponse
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    ImageComponent askStim
      image [set every repeat] = $'spatialupdating_stimuli/Ask'+np.unique(color[trial==practiceBlock.thisN+1])[practiceColor.thisN].title()+'.JPG'
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent askResp
      allowedKeys = 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9'
      correctAns = $myPract.expectedResponse
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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    CodeComponent addData_2
      Code Type = Py
      End Routine:
        if np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "blu":
            sequenceDataset.loc[rowCounter, 'observedResponse_blu'] = askResp.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_blu'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_blu'] == sequenceDataset.loc[rowCounter, 'observedResponse_blu'])
            thisExp.addData('myPract.expectedResponse_blu', sequenceDataset.loc[rowCounter, 'expectedResponse_blu'])
            thisExp.addData('myPract.observedResponse_blu', sequenceDataset.loc[rowCounter, 'observedResponse_blu'])
            thisExp.addData('myPract.Accuracy_blu', sequenceDataset.loc[rowCounter, 'Accuracy_blu'])

        elif np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "gre":
            sequenceDataset.loc[rowCounter, 'observedResponse_gre'] = askResp.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_gre'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_gre'] == sequenceDataset.loc[rowCounter, 'observedResponse_gre'])
            thisExp.addData('myPract.expectedResponse_gre', sequenceDataset.loc[rowCounter, 'expectedResponse_gre'])
            thisExp.addData('myPract.observedResponse_gre', sequenceDataset.loc[rowCounter, 'observedResponse_gre'])
            thisExp.addData('myPract.Accuracy_gre', sequenceDataset.loc[rowCounter, 'Accuracy_gre'])

        elif np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "red":
            sequenceDataset.loc[rowCounter, 'observedResponse_red'] = askResp.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_red'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_red'] == sequenceDataset.loc[rowCounter, 'observedResponse_red'])
            thisExp.addData('myPract.expectedResponse_red', sequenceDataset.loc[rowCounter, 'expectedResponse_red'])
            thisExp.addData('myPract.observedResponse_red', sequenceDataset.loc[rowCounter, 'observedResponse_red'])
            thisExp.addData('myPract.Accuracy_red', sequenceDataset.loc[rowCounter, 'Accuracy_red'])

        elif np.unique(color[trial == practiceBlock.thisN+1])[practiceColor.thisN] == "yel":
            sequenceDataset.loc[rowCounter, 'observedResponse_yel'] = askResp.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_yel'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_yel'] == sequenceDataset.loc[rowCounter, 'observedResponse_yel'])
            thisExp.addData('myPract.expectedResponse_yel', sequenceDataset.loc[rowCounter, 'expectedResponse_yel'])
            thisExp.addData('myPract.observedResponse_yel', sequenceDataset.loc[rowCounter, 'observedResponse_yel'])
            thisExp.addData('myPract.Accuracy_yel', sequenceDataset.loc[rowCounter, 'Accuracy_yel'])
  Routine experimentalResponse
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    ImageComponent askStim_2
      image [set every repeat] = $'spatialupdating_stimuli/Ask'+np.unique(color[trial==experimentalBlock.thisN+1])[experimentalColor.thisN].title()+'.JPG'
      saveStartStop = False
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent askResp_2
      allowedKeys = 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9'
      correctAns = $myPract.expectedResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent addData_5
      Code Type = Py
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      End Routine:
        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "blu":
            sequenceDataset.loc[rowCounter, 'observedResponse_blu'] = askResp_2.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_blu'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_blu'] == sequenceDataset.loc[rowCounter, 'observedResponse_blu'])
            thisExp.addData('myExp.expectedResponse_blu', sequenceDataset.loc[rowCounter, 'expectedResponse_blu'])
            thisExp.addData('myExp.observedResponse_blu', sequenceDataset.loc[rowCounter, 'observedResponse_blu'])
            thisExp.addData('myExp.Accuracy_blu', sequenceDataset.loc[rowCounter, 'Accuracy_blu'])

        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "gre":
            sequenceDataset.loc[rowCounter, 'observedResponse_gre'] = askResp_2.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_gre'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_gre'] == sequenceDataset.loc[rowCounter, 'observedResponse_gre'])
            thisExp.addData('myExp.expectedResponse_gre', sequenceDataset.loc[rowCounter, 'expectedResponse_gre'])
            thisExp.addData('myExp.observedResponse_gre', sequenceDataset.loc[rowCounter, 'observedResponse_gre'])
            thisExp.addData('myExp.Accuracy_gre', sequenceDataset.loc[rowCounter, 'Accuracy_gre'])

        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "red":
            sequenceDataset.loc[rowCounter, 'observedResponse_red'] = askResp_2.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_red'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_red'] == sequenceDataset.loc[rowCounter, 'observedResponse_red'])
            thisExp.addData('myExp.expectedResponse_red', sequenceDataset.loc[rowCounter, 'expectedResponse_red'])
            thisExp.addData('myExp.observedResponse_red', sequenceDataset.loc[rowCounter, 'observedResponse_red'])
            thisExp.addData('myExp.Accuracy_red', sequenceDataset.loc[rowCounter, 'Accuracy_red'])

        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "yel":
            sequenceDataset.loc[rowCounter, 'observedResponse_yel'] = askResp_2.keys
            sequenceDataset.loc[rowCounter, 'Accuracy_yel'] = np.int8(sequenceDataset.loc[rowCounter, 'expectedResponse_yel'] == sequenceDataset.loc[rowCounter, 'observedResponse_yel'])
            thisExp.addData('myExp.expectedResponse_yel', sequenceDataset.loc[rowCounter, 'expectedResponse_yel'])
            thisExp.addData('myExp.observedResponse_yel', sequenceDataset.loc[rowCounter, 'observedResponse_yel'])
            thisExp.addData('myExp.Accuracy_yel', sequenceDataset.loc[rowCounter, 'Accuracy_yel'])


        # volume of feedback
        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "blu":
            if sequenceDataset.loc[rowCounter, 'Accuracy_blu']:
                sound_volume = 0
            else:
                sound_volume = 1

        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "gre":
            if sequenceDataset.loc[rowCounter, 'Accuracy_gre']:
                sound_volume = 0
            else:
                sound_volume = 1

        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "red":
            if sequenceDataset.loc[rowCounter, 'Accuracy_red']:
                sound_volume = 0
            else:
                sound_volume = 1

        if np.unique(color[trial == experimentalBlock.thisN + 1])[experimentalColor.thisN] == "yel":
            if sequenceDataset.loc[rowCounter, 'Accuracy_yel']:
                sound_volume = 0
            else:
                sound_volume = 1
    ProgressComponent progressBar_2
      anchor = top-left
      fillColor = None
      lineWidth = 4
      pos = (-0.9, 0.5)
      progress [set every repeat] = $sequenceDataset.loc[rowCounter, 'trial']/trial_num
      saveStartStop = False
      size = (1.8, 0.03)
      startVal [time (s)] = 0
      units = height
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    SoundComponent fbSound_2
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      stopWithRoutine = False
      volume [set every repeat] = sound_volume
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  Routine practiceUpdateAccuracy_tot
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    CodeComponent endSetCode
      Code Type = Py
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      Begin Routine:
        # total accuracy for this set
        sequenceDataset.loc[rowCounter, 'Accuracy_tot'] = np.float64(np.nansum([sequenceDataset.loc[rowCounter, 'Accuracy_blu'], sequenceDataset.loc[rowCounter, 'Accuracy_gre'], sequenceDataset.loc[rowCounter, 'Accuracy_red'], sequenceDataset.loc[rowCounter, 'Accuracy_yel']]))
        thisExp.addData('myPract.Accuracy_Mean', sequenceDataset.loc[rowCounter, 'Accuracy_tot'] / numCol)
  Routine experimentalUpdateAccuracy_tot
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    CodeComponent endSetCode_2
      Code Type = Py
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      Begin Routine:
        # total accuracy for this set
        sequenceDataset.loc[rowCounter, 'Accuracy_tot'] = np.float64(np.nansum([sequenceDataset.loc[rowCounter, 'Accuracy_blu'], sequenceDataset.loc[rowCounter, 'Accuracy_gre'], sequenceDataset.loc[rowCounter, 'Accuracy_red'], sequenceDataset.loc[rowCounter, 'Accuracy_yel']]))
        thisExp.addData('myExp.Accuracy_Mean', sequenceDataset.loc[rowCounter, 'Accuracy_tot'] / numCol)


        # adaptation
        if sequenceDataset.loc[rowCounter, 'Accuracy_tot'] == numCol:
            sequenceDataset.loc[rowCounter, 'step'] = -0.05  # if all correct responses, decrease duration
        else:
            sequenceDataset.loc[rowCounter, 'step'] = +0.05  # otherwise (even one incorrect), increase duration
        thisExp.addData('myExp.step', sequenceDataset.loc[rowCounter, 'step'])
  Routine practiceInstructions3
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    ImageComponent instImage_3
      image = instSFU_3.jpg
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText_3
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine taskInstruction
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    ImageComponent instImage_4
      image = instSFU_4.jpg
      pos = (0, 0.1)
      size = (1.5,1.5)
      startVal [time (s)] = 0.0
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    TextComponent instText_4
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent moveOn_6
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practiceSequenceGeneration
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    TextComponent waitScreen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode
      Code Type = Py
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      Begin Routine:
        rowCounter = -1
      End Routine:
        """
        GENERATE LISTS OF SPATIAL-FIGURAL UPDATING STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trial_num = 2 # 2 sets
        grid_num = 10 # 10 trials/set
        stim_num = trial_num * grid_num  # total number of grids (20 memorization trials)

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial, grid, stimulus columns
        trial = np.repeat(1+np.arange(0,trial_num),grid_num)
        grid  = np.tile(1+np.arange(0,grid_num),trial_num)
        stimulus = 1+np.arange(0,stim_num)

        """
        b.1 Assign Stimuli Pool
        """

        # big pool of colors
        color_bigPool = ["blu", "gre", "red", "yel"]

        color    = np.empty(stim_num,dtype="<U3") # initialize
        position = np.empty(stim_num,dtype="<U1") # initialize
        expectedResponse_blu = np.empty(stim_num,dtype="<U5") # initialize
        expectedResponse_gre = np.empty(stim_num,dtype="<U5") # initialize
        expectedResponse_red = np.empty(stim_num,dtype="<U5") # initialize
        expectedResponse_yel = np.empty(stim_num,dtype="<U5") # initialize

        for trialIdx in np.arange(0,trial_num):

            numCol = 3 # number of colors in use within this set
            color_pool = np.random.choice(color_bigPool,numCol,False)  # pick n colors within a set
            color_pool = list(color_pool)  # convert np.array to list

            # %% create color_grid column (the list of colors within this trial)
            # criteria:
            # 1. not the same color consecutively
            # 2. each color is presented at least twice
            toggleSwitch = 1
            while toggleSwitch==1:

                color_grid = np.empty(grid_num,dtype="<U3") # initialize
                for gridIdx in np.arange(0,grid_num):

                    if grid[gridIdx]==1: # 1st grid
                        # pick any color
                        color_grid[gridIdx]  = np.random.choice(color_pool,1)[0]

                    elif grid[gridIdx]>=2: # 2nd trial and onwards
                     # "criterion 1": pick any color except the one presented before
                        color_pool_red  = np.delete(color_pool,   color_pool.index(color_grid[gridIdx-1]) )  # reduced pool
                        color_grid[gridIdx]  = np.random.choice(color_pool_red,1)[0]

                # "criterion 2": each color is presented at least twice but not more than five times
                colorSum  = np.empty(len(color_pool),dtype=int)
                for poolIdx in np.arange(0,len(color_pool)):
                    colorSum[poolIdx]  = sum(color_grid==color_pool[poolIdx])

                # implements criterion 2 check above (keep asking for a new sequence if the check fails)
                if np.min(colorSum)>=2  and  np.max(colorSum)<=5:
                    toggleSwitch = 0

            # %% create position_grid column (the list of positions within this set)
            # criteria:
            # 1. always a different position_grid for each color

            # pool of position_grids (separate for each color) based on the numeric pad (e.g., 1=bottom-left, 9=top-right)
            blu_pos_pool = 1+np.arange(0,9)
            gre_pos_pool = 1+np.arange(0,9)
            red_pos_pool = 1+np.arange(0,9)
            yel_pos_pool = 1+np.arange(0,9)

            # shuffle the position_grids (separately for each color)
            np.random.shuffle(blu_pos_pool)
            np.random.shuffle(gre_pos_pool)
            np.random.shuffle(red_pos_pool)
            np.random.shuffle(yel_pos_pool)

            # initialize color counter
            bluIdx = -1
            greIdx = -1
            redIdx = -1
            yelIdx = -1
            position_grid = np.zeros(grid_num,dtype=int) # initialize

            for gridIdx in np.arange(0,grid_num):
                if color_grid[gridIdx]=="blu":
                    bluIdx = bluIdx + 1 # increase the counter
                    position_grid[gridIdx]  = blu_pos_pool[bluIdx] # pick sequentially from the (shuffled) pool for this specific color

                elif color_grid[gridIdx]=="gre":
                    greIdx = greIdx + 1 # increase the counter
                    position_grid[gridIdx]  = gre_pos_pool[greIdx] # pick sequentially from the (shuffled) pool for this specific color

                elif color_grid[gridIdx]=="red":
                    redIdx = redIdx + 1 # increase the counter
                    position_grid[gridIdx]  = red_pos_pool[redIdx] # pick sequentially from the (shuffled) pool for this specific color

                elif color_grid[gridIdx]=="yel":
                    yelIdx = yelIdx + 1 # increase the counter
                    position_grid[gridIdx]  = yel_pos_pool[yelIdx] # pick sequentially from the (shuffled) pool for this specific color

            """
            ========================
            c. Assign Response Keys
            ========================
            """

            # create expectedResponse (separate per each color and combined)
            # find the last position for each color, only if this color was presented in the set

            expectedResponse_blu_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "blu" in color_pool:
                expectedResponse_blu_grid[gridIdx] = np.char.add("num_", np.asarray(blu_pos_pool[bluIdx],dtype="<U1"))

            expectedResponse_gre_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "gre" in color_pool:
                expectedResponse_gre_grid[gridIdx] = np.char.add("num_", np.asarray(gre_pos_pool[greIdx],dtype="<U1"))

            expectedResponse_red_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "red" in color_pool:
                expectedResponse_red_grid[gridIdx] = np.char.add("num_", np.asarray(red_pos_pool[redIdx],dtype="<U1"))

            expectedResponse_yel_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "yel" in color_pool:
                expectedResponse_yel_grid[gridIdx] = np.char.add("num_", np.asarray(yel_pos_pool[yelIdx],dtype="<U1"))

            # %% add these grids to the current set
            color[trial==trialIdx+1] = color_grid
            position[trial==trialIdx+1] = position_grid
            expectedResponse_blu[trial==trialIdx+1] = expectedResponse_blu_grid
            expectedResponse_gre[trial==trialIdx+1] = expectedResponse_gre_grid
            expectedResponse_red[trial==trialIdx+1] = expectedResponse_red_grid
            expectedResponse_yel[trial==trialIdx+1] = expectedResponse_yel_grid

        # %% create gridName (i.e., color + position)
        gridName = np.char.add(np.char.add(color, np.repeat("_",len(color))), np.asarray(position, dtype='<U1'))

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'grid': grid,
                                       'stimulus': stimulus,
                                       'color': color,
                                       'position': position,
                                       'gridName': gridName,
                                       'expectedResponse_blu': expectedResponse_blu,
                                       'observedResponse_blu': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_blu': np.nan,
                                       'expectedResponse_gre': expectedResponse_gre,
                                       'observedResponse_gre': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_gre': np.nan,
                                       'expectedResponse_red': expectedResponse_red,
                                       'observedResponse_red': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_red': np.nan,
                                       'expectedResponse_yel': expectedResponse_yel,
                                       'observedResponse_yel': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_yel': np.nan,
                                       'Accuracy_tot': np.nan,
                                       'RespTime_grid': np.nan,
                                       'gridDuration': np.nan,
                                       'step': np.nan})
  Routine startPractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent moveOn_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startTask
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    TextComponent startTask_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
    KeyboardComponent moveOn_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taskSequenceGeneration
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    TextComponent waitScreen_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Generating stimuli...
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    CodeComponent stimuliCode_2
      Code Type = Py
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      Begin Routine:
        rowCounter = -1
      End Routine:
        """
        GENERATE LISTS OF SPATIAL-FIGURAL UPDATING STIMULI
        """

        import numpy as np
        import pandas as pd

        """
        ===================================
        a. Trial Numbers and Distributions
        ===================================
        """

        trial_num = 18 # 18 sets
        grid_num = 12 # 12 memorization trials/set
        stim_num = trial_num * grid_num  # total number of grids (216 memorization trials)

        """
        =============================
        b. Trial Sequence Generation
        =============================
        """

        # create trial, grid, stimulus columns
        trial = np.repeat(1+np.arange(0,trial_num),grid_num)
        grid  = np.tile(1+np.arange(0,grid_num),trial_num)
        stimulus = 1+np.arange(0,stim_num)

        """
        b.1 Assign Stimuli Pool
        """

        # big pool of colors
        color_bigPool = ["blu", "gre", "red", "yel"]

        color    = np.empty(stim_num,dtype="<U3") # initialize
        position = np.empty(stim_num,dtype="<U1") # initialize
        expectedResponse_blu = np.empty(stim_num,dtype="<U5") # initialize
        expectedResponse_gre = np.empty(stim_num,dtype="<U5") # initialize
        expectedResponse_red = np.empty(stim_num,dtype="<U5") # initialize
        expectedResponse_yel = np.empty(stim_num,dtype="<U5") # initialize

        for trialIdx in np.arange(0,trial_num):

            numCol = 3 # number of colors in use within this set
            color_pool = np.random.choice(color_bigPool,numCol,False)  # pick n colors within a set
            color_pool = list(color_pool)  # convert np.array to list

            # %% create color_grid column (the list of colors within this set)
            # criteria:
            # 1. not the same color consecutively
            # 2. each color is presented at least twice
            toggleSwitch = 1
            while toggleSwitch==1:

                color_grid = np.empty(grid_num,dtype="<U3") # initialize
                for gridIdx in np.arange(0,grid_num):

                    if grid[gridIdx]==1: # 1st grid
                        # pick any color
                        color_grid[gridIdx]  = np.random.choice(color_pool,1)[0]

                    elif grid[gridIdx]>=2: # 2nd trial and onwards
                     # "criterion 1": pick any color except the one presented before
                        color_pool_red  = np.delete(color_pool,   color_pool.index(color_grid[gridIdx-1]) )  # reduced pool
                        color_grid[gridIdx]  = np.random.choice(color_pool_red,1)[0]

                # "criterion 2": each color is presented at least twice but not more than five times
                colorSum  = np.empty(len(color_pool),dtype=int)
                for poolIdx in np.arange(0,len(color_pool)):
                    colorSum[poolIdx]  = sum(color_grid==color_pool[poolIdx])

                # implements criterion 2 check above (keep asking for a new sequence if the check fails)
                if np.min(colorSum)>=2  and  np.max(colorSum)<=5:
                    toggleSwitch = 0

            # %% create position_grid column (the list of positions within this set)
            # criteria:
            # 1. always a different position_grid for each color

            # pool of position_grids (separate for each color) based on the numeric pad (e.g., 1=bottom-left, 9=top-right)
            blu_pos_pool = 1+np.arange(0,9)
            gre_pos_pool = 1+np.arange(0,9)
            red_pos_pool = 1+np.arange(0,9)
            yel_pos_pool = 1+np.arange(0,9)

            # shuffle the position_grids (separately for each color)
            np.random.shuffle(blu_pos_pool)
            np.random.shuffle(gre_pos_pool)
            np.random.shuffle(red_pos_pool)
            np.random.shuffle(yel_pos_pool)

            # initialize color counter
            bluIdx = -1
            greIdx = -1
            redIdx = -1
            yelIdx = -1
            position_grid = np.zeros(grid_num,dtype=int) # initialize

            for gridIdx in np.arange(0,grid_num):
                if color_grid[gridIdx]=="blu":
                    bluIdx = bluIdx + 1 # increase the counter
                    position_grid[gridIdx]  = blu_pos_pool[bluIdx] # pick sequentially from the (shuffled) pool for this specific color

                elif color_grid[gridIdx]=="gre":
                    greIdx = greIdx + 1 # increase the counter
                    position_grid[gridIdx]  = gre_pos_pool[greIdx] # pick sequentially from the (shuffled) pool for this specific color

                elif color_grid[gridIdx]=="red":
                    redIdx = redIdx + 1 # increase the counter
                    position_grid[gridIdx]  = red_pos_pool[redIdx] # pick sequentially from the (shuffled) pool for this specific color

                elif color_grid[gridIdx]=="yel":
                    yelIdx = yelIdx + 1 # increase the counter
                    position_grid[gridIdx]  = yel_pos_pool[yelIdx] # pick sequentially from the (shuffled) pool for this specific color

            """
            ========================
            c. Assign Response Keys
            ========================
            """
            # create expectedResponse (separate per each color and combined)
            # find the last position for each color, only if this color was presented in the set

            expectedResponse_blu_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "blu" in color_pool:
                expectedResponse_blu_grid[gridIdx] = np.char.add("num_", np.asarray(blu_pos_pool[bluIdx],dtype="<U1"))

            expectedResponse_gre_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "gre" in color_pool:
                expectedResponse_gre_grid[gridIdx] = np.char.add("num_", np.asarray(gre_pos_pool[greIdx],dtype="<U1"))

            expectedResponse_red_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "red" in color_pool:
                expectedResponse_red_grid[gridIdx] = np.char.add("num_", np.asarray(red_pos_pool[redIdx],dtype="<U1"))

            expectedResponse_yel_grid = np.empty(grid_num,dtype="<U5") # initialize
            if "yel" in color_pool:
                expectedResponse_yel_grid[gridIdx] = np.char.add("num_", np.asarray(yel_pos_pool[yelIdx],dtype="<U1"))

            # %% add these grids to the current set
            color[trial==trialIdx+1] = color_grid
            position[trial==trialIdx+1] = position_grid
            expectedResponse_blu[trial==trialIdx+1] = expectedResponse_blu_grid
            expectedResponse_gre[trial==trialIdx+1] = expectedResponse_gre_grid
            expectedResponse_red[trial==trialIdx+1] = expectedResponse_red_grid
            expectedResponse_yel[trial==trialIdx+1] = expectedResponse_yel_grid

        # %% create gridName (i.e., color + position)
        gridName = np.char.add(np.char.add(color, np.repeat("_",len(color))), np.asarray(position, dtype='<U1'))

        """
        ========================
        d. Initialise DataFrame
        ========================
        """

        # build a dataframe from dictionary
        sequenceDataset= pd.DataFrame({'trial': trial,
                                       'grid': grid,
                                       'stimulus': stimulus,
                                       'color': color,
                                       'position': position,
                                       'gridName': gridName,
                                       'expectedResponse_blu': expectedResponse_blu,
                                       'observedResponse_blu': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_blu': np.nan,
                                       'expectedResponse_gre': expectedResponse_gre,
                                       'observedResponse_gre': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_gre': np.nan,
                                       'expectedResponse_red': expectedResponse_red,
                                       'observedResponse_red': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_red': np.nan,
                                       'expectedResponse_yel': expectedResponse_yel,
                                       'observedResponse_yel': np.empty(len(trial),dtype="<U5"),
                                       'Accuracy_yel': np.nan,
                                       'Accuracy_tot': np.nan,
                                       'RespTime_grid': np.nan,
                                       'gridDuration': np.nan,
                                       'step': np.nan})
  Routine end
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    ImageComponent endImage
      image = endSlide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endText
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent moveOn_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine practiceInstructions
  Routine practiceInstructions2
  Routine practiceInstructions3
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startPractice
    Routine practiceSequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = np.array(sequenceDataset.trial)[-1] 
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      LoopInitiator practiceGrid loopType="TrialHandler"
        loopType = sequential
        nReps = sum(sequenceDataset.trial==1+practiceBlock.thisN) 
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        Routine practiceTrial
      LoopTerminator practiceGrid
      LoopInitiator practiceColor loopType="TrialHandler"
        loopType = sequential
        nReps = numCol
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        conditions:
          [{'AskImageFile_practice': 'AskBlu.JPG', 'AskColor_practice': 'blu'},
          {'AskImageFile_practice': 'AskGre.JPG', 'AskColor_practice': 'gre'},
          {'AskImageFile_practice': 'AskYel.JPG', 'AskColor_practice': 'yel'},
          {'AskImageFile_practice': 'AskRed.JPG', 'AskColor_practice': 'red'}]
        Routine practiceResponse
        Routine practiceTrial_feedback
      LoopTerminator practiceColor
      Routine practiceUpdateAccuracy_tot
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine taskInstruction
  Routine startTask
  Routine taskSequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = np.array(sequenceDataset.trial)[-1] 
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    LoopInitiator experimentalGrid loopType="TrialHandler"
      loopType = sequential
      nReps = sum(sequenceDataset.trial==1+experimentalBlock.thisN) 
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      Routine experimentalTrial
    LoopTerminator experimentalGrid
    LoopInitiator experimentalColor loopType="TrialHandler"
      loopType = sequential
      nReps = numCol
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      conditions:
        [{'AskImageFile_experimental': 'AskBlu.JPG', 'AskColor_experimental': 'blu'},
        {'AskImageFile_experimental': 'AskGre.JPG', 'AskColor_experimental': 'gre'},
        {'AskImageFile_experimental': 'AskYel.JPG', 'AskColor_experimental': 'yel'},
        {'AskImageFile_experimental': 'AskRed.JPG', 'AskColor_experimental': 'red'}]
      Routine experimentalResponse
    LoopTerminator experimentalColor
    Routine experimentalUpdateAccuracy_tot
  LoopTerminator experimentalBlock
  Routine end
